CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file doesnot contain "Mask") (file doesnot contain "Polygons")
    Name to assign these images:Raw
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CellMasks")
    Name to assign these images:Cell
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Polygons")
    Name to assign these images:Polygon
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ConvertImageToObjects:[module_num:5|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
    Select the input image:Cell
    Name the output object:Cell
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

RemoveHoles:[module_num:6|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enabled:False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
    Select the input image:Polygon
    Name the output image:Polygon_RemoveHoles
    Size of holes to fill:3

ConvertImageToObjects:[module_num:7|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
    Select the input image:Polygon
    Name the output object:Polygon
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

RelateObjects:[module_num:8|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
    Parent objects:Cell
    Child objects:Polygon
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:9|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
    Select the input objects:Polygon
    Name the new objects:Polygon_perCell
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cell
    Output object type:Disconnected

MeasureObjectSizeShape:[module_num:10|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
    Select object sets to measure:Cell, Polygon, Polygon_perCell
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

DisplayDataOnImage:[module_num:11|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
    Display object or image measurements?:Object
    Select the input objects:Polygon_perCell
    Measurement to display:AreaShape_EulerNumber
    Select the image on which to display the measurements:Polygon
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage_NumberOfGapsPerCell
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
DisplayDataOnImage:[module_num:12|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
    Display object or image measurements?:Object
    Select the input objects:Polygon_perCell
    Measurement to display:AreaShape_Area
    Select the image on which to display the measurements:Polygon
    Text color:#00FF40
    Name the output image that has the measurements displayed:DisplayImage_AreaOfGapsPerCell
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
ExportToSpreadsheet:[module_num:13|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|C:\\Amin\\E L M I\\PostDoc\\TRR186 Collaborations\\Project A23 - Endoplasmic Reticulum (Giulia Ruffini)\\2024
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Cell|Children_Polygon_Count,Polygon_perCell|AreaShape_Compactness,Polygon_perCell|AreaShape_MedianRadius,Polygon_perCell|AreaShape_EulerNumber,Polygon_perCell|AreaShape_Solidity,Polygon_perCell|AreaShape_FormFactor,Polygon_perCell|AreaShape_Area,Polygon_perCell|AreaShape_MeanRadius
    Representation of Nan/Inf:Null
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Cell
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
