CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:19
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file doesnot contain "Mask") (file doesnot contain "Polygons")
    Name to assign these images:Raw
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CellMasks")
    Name to assign these images:Cell
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CytoplasmMask")
    Name to assign these images:Cytoplasm
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ERMask")
    Name to assign these images:ERsignal
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Polygons")
    Name to assign these images:Polygon
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ConvertImageToObjects:[module_num:5|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
    Select the input image:Cell
    Name the output object:Cell
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:6|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
    Select the input image:Cytoplasm
    Name the output object:Cytoplasm
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:7|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
    Select the input image:ERsignal
    Name the output object:ERsignal
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:8|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
    Select the input image:Polygon
    Name the output object:Polygon
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

MaskImage:[module_num:9|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
    Select the input image:Raw
    Name the output image:ERsignal_Masked
    Use objects or an image as a mask?:Objects
    Select object for mask:ERsignal
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    Invert the mask?:No

ErodeImage:[module_num:10|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enabled:False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
    Name the output image:ErodeImage
    Structuring element:Disk,1

DilateImage:[module_num:11|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enabled:False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
    Name the output image:DilateImage
    Structuring element:Disk,1

Opening:[module_num:12|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
    Select the input image:ERsignal
    Name the output image:OpeningERsignal
    Structuring element:disk,2

ConvertImageToObjects:[module_num:13|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
    Select the input image:OpeningERsignal
    Name the output object:OpeningERsignal
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

MeasureObjectSizeShape:[module_num:14|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
    Select object sets to measure:OpeningERsignal
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:15|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enabled:False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
    Select the objects to filter:OpeningERsignal
    Name the output objects:ERsheets1
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:40
    Filter using a maximum measurement value?:No
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
OverlayOutlines:[module_num:16|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Raw
    Name the output image:OverlaidOutlines_ERsheets1
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:OpeningERsignal

MaskImage:[module_num:17|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enabled:False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
    Select the input image:Raw
    Name the output image:ERsheets1_Masked
    Use objects or an image as a mask?:Objects
    Select object for mask:ERsheets1
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:18|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enabled:False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
    Select the input image:ERsheets1_Masked
    Name the primary objects to be identified:ERsheets3
    Typical diameter of objects, in pixel units (Min,Max):20,200
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Suppress local maxima that are closer than this minimum allowed distance:1
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.005
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
OverlayOutlines:[module_num:19|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ERsignal_Masked
    Name the output image:OverlaidOutlines_ERsheets3
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:ERsheets3
