CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['']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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "Cell")
    Name to assign these images:CellMask
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file doesnot contain "mask")
    Name to assign these images:Raw
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Cyto")
    Name to assign these images:CytoplasmMask
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ER")
    Name to assign these images:ERMask
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['']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
    Do you want to group your images?:No
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
ConvertImageToObjects:[module_num:5|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
    Select the input image:CellMask
    Name the output object:Cell
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:2

ConvertImageToObjects:[module_num:6|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
    Select the input image:CytoplasmMask
    Name the output object:Cytoplasm
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:7|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notes:['']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
    Select the input image:ERMask
    Name the output object:ERMask
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

MaskObjects:[module_num:8|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
    Select objects to be masked:Cytoplasm
    Name the masked objects:ERMask_perCell
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ERMask
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

IdentifyTertiaryObjects:[module_num:9|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
    Select the larger identified objects:Cell
    Select the smaller identified objects:Cytoplasm
    Name the tertiary objects to be identified:smallNuclei
    Shrink smaller object prior to subtraction?:No

DilateObjects:[module_num:10|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notes:['']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
    Select the input object:smallNuclei
    Name the output object:Nuclei
    Structuring element:disk,3

DilateObjects:[module_num:11|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
    Select the input object:Nuclei
    Name the output object:DilatedNuclei
    Structuring element:disk,5

MeasureObjectIntensityDistribution:[module_num:12|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
    Select images to measure:ERMask
    Hidden:1
    Hidden:1
    Hidden:1
    Calculate intensity Zernikes?:None
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    Select objects to measure:Cell
    Object to use as center?:Edges of other objects
    Select objects to use as centers:DilatedNuclei
    Scale the bins?:Yes
    Number of bins:5
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    Image:None
    Objects to display:Do not use
    Number of bins:3
    Measurement:Fraction at Distance
    Color map:Default
    Save display as image?:Yes
    Output image name:RID_ER

MeasureObjectIntensityDistribution:[module_num:13|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
    Select images to measure:CellMask
    Hidden:1
    Hidden:1
    Hidden:1
    Calculate intensity Zernikes?:None
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    Select objects to measure:Cell
    Object to use as center?:Edges of other objects
    Select objects to use as centers:DilatedNuclei
    Scale the bins?:Yes
    Number of bins:5
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    Image:None
    Objects to display:Do not use
    Number of bins:3
    Measurement:Fraction at Distance
    Color map:Default
    Save display as image?:Yes
    Output image name:RID_Cell

MeasureObjectIntensityDistribution:[module_num:14|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
    Select images to measure:Raw
    Hidden:1
    Hidden:1
    Hidden:1
    Calculate intensity Zernikes?:None
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    Select objects to measure:Cell
    Object to use as center?:Edges of other objects
    Select objects to use as centers:DilatedNuclei
    Scale the bins?:Yes
    Number of bins:5
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    Image:None
    Objects to display:Do not use
    Number of bins:3
    Measurement:Fraction at Distance
    Color map:Default
    Save display as image?:Yes
    Output image name:RID_Raw

MeasureObjectIntensity:[module_num:15|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notes:['']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
    Select images to measure:CellMask, ERMask, Raw
    Select objects to measure:Cell, ERMask, Nuclei

MeasureObjectSizeShape:[module_num:16|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notes:['']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
    Select object sets to measure:Cell, Cytoplasm, ERMask, ERMask_perCell, Nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:17|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|newResult
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Cell|RadialDistribution_FracAtD_ERMask_2of5,Cell|RadialDistribution_FracAtD_ERMask_5of5,Cell|RadialDistribution_FracAtD_ERMask_4of5,Cell|RadialDistribution_FracAtD_ERMask_1of5,Cell|RadialDistribution_FracAtD_ERMask_3of5,Cell|RadialDistribution_FracAtD_CellMask_5of5,Cell|RadialDistribution_FracAtD_CellMask_3of5,Cell|RadialDistribution_FracAtD_CellMask_4of5,Cell|RadialDistribution_FracAtD_CellMask_2of5,Cell|RadialDistribution_FracAtD_CellMask_1of5,Cell|AreaShape_Area,Cytoplasm|AreaShape_Area,ERMask_perCell|AreaShape_Area
    Representation of Nan/Inf:Null
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Cell
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:ERMask_perCell
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Cytoplasm
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
