CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:172
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['']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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "mask")
    Name to assign these images:Mask
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file doesnot contain "mask")
    Name to assign these images:Raw
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['']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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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notes:['']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
    Select the input image:Mask
    Name the output image:Mask_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
ConvertImageToObjects:[module_num:6|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notes:['']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
    Select the input image:Mask
    Name the output object:Mask
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

EnhanceOrSuppressFeatures:[module_num:7|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notes:['']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
    Select the input image:Raw
    Name the output image:EnhancedNucleusHoles
    Select the operation:Enhance
    Feature size:10
    Feature type:Dark holes
    Range of hole sizes:50,250
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
MeasureObjectSizeShape:[module_num:8|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notes:['']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
    Select object sets to measure:Mask
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:9|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notes:['']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
    Select the objects to filter:Mask
    Name the output objects:Mask_ArtifactRemoved
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:12000
    Filter using a maximum measurement value?:No
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
Threshold:[module_num:10|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notes:['']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
    Select the input image:EnhancedNucleusHoles
    Name the output image:EnhancedNucleusHoles_Mask
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:0.1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:11|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notes:['']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
    Select the input image:EnhancedNucleusHoles_Mask
    Name the primary objects to be identified:toFindNuclei
    Typical diameter of objects, in pixel units (Min,Max):80,250
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.01
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
MeasureObjectSizeShape:[module_num:12|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notes:['']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
    Select object sets to measure:toFindNuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:13|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notes:['']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
    Select the objects to filter:toFindNuclei
    Name the output objects:toFindNuclei_Filtered
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:0.3
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0

DilateObjects:[module_num:14|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notes:['']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
    Select the input object:toFindNuclei_Filtered
    Name the output object:Nuclei
    Structuring element:disk,3

ConvertObjectsToImage:[module_num:15|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notes:['']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
    Select the input objects:Nuclei
    Name the output image:Nuclei
    Select the color format:Grayscale
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
SaveImages:[module_num:16|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:Nuclei
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_NucleiMasks
    Saved file format:tiff
    Output file location:Same folder as image|Desktop/20230228_CP_Documentation_TestRun
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

OverlayObjects:[module_num:17|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notes:['']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
    Input:Raw
    Name the output image:OverlayObjects
    Objects:Nuclei
    Opacity:0.3

Align:[module_num:18|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notes:['']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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

IdentifySecondaryObjects:[module_num:19|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notes:['']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
    Select the input objects:Nuclei
    Name the objects to be identified:CellBordersWithCP
    Select the method to identify the secondary objects:Propagation
    Select the input image:Raw
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:10
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:Yes
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
MaskObjects:[module_num:20|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notes:['']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
    Select objects to be masked:Mask_ArtifactRemoved
    Name the masked objects:CellAll
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CellBordersWithCP
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:No

RelateObjects:[module_num:21|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notes:['']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
    Parent objects:Nuclei
    Child objects:CellAll
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:22|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notes:['']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
    Select the input objects:CellAll
    Name the new objects:CellNoNuclei
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Nuclei
    Output object type:Disconnected

FilterObjects:[module_num:23|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notes:['']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
    Select the objects to filter:CellNoNuclei
    Name the output objects:Cell
    Select the filtering mode:Image or mask border
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    Additional object count:0
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    Keep removed objects as a seperate set?:Yes
    Name the objects removed by the filter:RemovedCells
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
ConvertObjectsToImage:[module_num:24|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notes:['']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
    Select the input objects:CellAll
    Name the output image:CellAll
    Select the color format:Grayscale
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
SaveImages:[module_num:25|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notes:['']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enabled:False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
    Select the type of image to save:Image
    Select the image to save:CellAll
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CellsIncludingTouchingBorders
    Saved file format:tiff
    Output file location:Same folder as image|Desktop/20230228_CP_Documentation_TestRun
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ConvertObjectsToImage:[module_num:26|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notes:['']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
    Select the input objects:Cell
    Name the output image:Cell
    Select the color format:Grayscale
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
SaveImages:[module_num:27|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:Cell
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CellMasks
    Saved file format:tiff
    Output file location:Same folder as image|Desktop/20230228_CP_Documentation_TestRun
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

Align:[module_num:28|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notes:['']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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

IdentifyTertiaryObjects:[module_num:29|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notes:['']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
    Select the larger identified objects:Cell
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

ConvertObjectsToImage:[module_num:30|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notes:['']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
    Select the input objects:Cytoplasm
    Name the output image:Cytoplasm
    Select the color format:Grayscale
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
SaveImages:[module_num:31|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:Cytoplasm
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CytoplasmMask
    Saved file format:tiff
    Output file location:Same folder as image|Desktop/20230228_CP_Documentation_TestRun
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MaskImage:[module_num:32|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notes:['']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
    Select the input image:Raw
    Name the output image:CytoplasmMasked
    Use objects or an image as a mask?:Objects
    Select object for mask:Cytoplasm
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    Invert the mask?:No

MeasureObjectIntensity:[module_num:33|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notes:['']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
    Select images to measure:Raw
    Select objects to measure:Cytoplasm

MeasureObjectSizeShape:[module_num:34|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notes:['']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
    Select object sets to measure:Cell, Cytoplasm, Nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureObjectIntensityDistribution:[module_num:35|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notes:['']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
    Select images to measure:Raw
    Hidden:1
    Hidden:1
    Hidden:1
    Calculate intensity Zernikes?:None
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    Select objects to measure:Cell
    Object to use as center?:Edges of other objects
    Select objects to use as centers:Nuclei
    Scale the bins?:Yes
    Number of bins:10
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    Image:None
    Objects to display:Do not use
    Number of bins:3
    Measurement:Mean Fraction
    Color map:Default
    Save display as image?:Yes
    Output image name:CytoplasmRID

SaveImages:[module_num:36|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:CytoplasmRID
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CytoplasmRID
    Saved file format:tiff
    Output file location:Same folder as image|Desktop/20230228_CP_Documentation_TestRun
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

Align:[module_num:37|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notes:['deals with perinuclear and peripheral region. Is that still required?']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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

Threshold:[module_num:38|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notes:['']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
    Select the input image:CytoplasmMasked
    Name the output image:toFindPerinuclearArea
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:10
    Threshold correction factor:2.2
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:Yes
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
IdentifyPrimaryObjects:[module_num:39|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notes:['']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
    Select the input image:toFindPerinuclearArea
    Name the primary objects to be identified:Perinuclear
    Typical diameter of objects, in pixel units (Min,Max):100,500
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.9
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
IdentifyTertiaryObjects:[module_num:40|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notes:['']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
    Select the larger identified objects:Cytoplasm
    Select the smaller identified objects:Perinuclear
    Name the tertiary objects to be identified:toFindPeripheralArea
    Shrink smaller object prior to subtraction?:No

RelateObjects:[module_num:41|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notes:['']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
    Parent objects:Cell
    Child objects:toFindPeripheralArea
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:42|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notes:['']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
    Select the input objects:toFindPeripheralArea
    Name the new objects:Peripheral
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cell
    Output object type:Disconnected

OverlayOutlines:[module_num:43|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notes:['']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Raw
    Name the output image:Overlaid_PerinuclearAndPeripheralBorders
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:Cytoplasm
    Select outline color:Green
    Select objects to display:Perinuclear

MaskImage:[module_num:44|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notes:['']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
    Select the input image:Raw
    Name the output image:PeripheralMasked
    Use objects or an image as a mask?:Objects
    Select object for mask:Peripheral
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    Invert the mask?:No

SaveImages:[module_num:45|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:Overlaid_PerinuclearAndPeripheralBorders
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlaid_PerinuclearAndPeripheralBorders
    Saved file format:tiff
    Output file location:Same folder as image|Desktop/20230228_CP_Documentation_TestRun
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

Align:[module_num:46|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notes:['']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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

EnhanceOrSuppressFeatures:[module_num:47|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notes:['start method 1']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
    Select the input image:CytoplasmMasked
    Name the output image:CytoplasmEnhancedHoles
    Select the operation:Enhance
    Feature size:20
    Feature type:Dark holes
    Range of hole sizes:1,30
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
ConvertImageToObjects:[module_num:48|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notes:['']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
    Select the input image:CytoplasmEnhancedHoles
    Name the output object:CytoplasmEnhancedHoles
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

MaskObjects:[module_num:49|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notes:['']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
    Select objects to be masked:CytoplasmEnhancedHoles
    Name the masked objects:CytoplasmEnhancedHoles_CytoArea
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Cytoplasm
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

IdentifyTertiaryObjects:[module_num:50|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notes:['']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
    Select the larger identified objects:Cytoplasm
    Select the smaller identified objects:CytoplasmEnhancedHoles_CytoArea
    Name the tertiary objects to be identified:ERsignal_method1invertedHoles
    Shrink smaller object prior to subtraction?:No

ExpandOrShrinkObjects:[module_num:51|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notes:['']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
    Select the input objects:Cell
    Name the output objects:ShrunkenCells
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:2
    Fill holes in objects so that all objects shrink to a single point?:No

IdentifyTertiaryObjects:[module_num:52|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notes:['']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
    Select the larger identified objects:Cell
    Select the smaller identified objects:ShrunkenCells
    Name the tertiary objects to be identified:Cell_perimeter
    Shrink smaller object prior to subtraction?:Yes

MaskObjects:[module_num:53|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notes:['']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
    Select objects to be masked:CytoplasmEnhancedHoles_CytoArea
    Name the masked objects:CytoplasmEnhancedHoles_CytoArea_NoMarginalPolygons
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Cell_perimeter
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:1
    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MeasureObjectSizeShape:[module_num:54|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notes:['altered (peripheral polygons unchecked) ', '', 'Note: we might need to uncheck the CytoplasmEnhancedHoles_CytoArea']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
    Select object sets to measure:CytoplasmEnhancedHoles_CytoArea, CytoplasmEnhancedHoles_CytoArea_NoMarginalPolygons
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:55|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notes:['Note: We unchecked the ‚save removed objects as separate set‘']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
    Select the objects to filter:CytoplasmEnhancedHoles_CytoArea_NoMarginalPolygons
    Name the output objects:CytoplasmEnhancedHoles_CytoArea_NoMarginalPolygons_filteredSmallObjs
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:5
    Filter using a maximum measurement value?:No
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
RelateObjects:[module_num:56|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notes:['altered - does this now allow gap counting (results displayed in Cell results file as individual column named „RelatedObjects_Children_Bla")', '', 'Note: ‚save parents as a new object set‘ is now unchecked']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
    Parent objects:Cell
    Child objects:CytoplasmEnhancedHoles_CytoArea_NoMarginalPolygons_filteredSmallObjs
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:57|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notes:['']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
    Select the input objects:CytoplasmEnhancedHoles_CytoArea_NoMarginalPolygons_filteredSmallObjs
    Name the new objects:PolygonsCyto_Method1Holes
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cell
    Output object type:Disconnected

Align:[module_num:58|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notes:['']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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

EnhanceOrSuppressFeatures:[module_num:59|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notes:['']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
    Select the input image:PeripheralMasked
    Name the output image:toFindER_PeripheralEnhancedTubules
    Select the operation:Enhance
    Feature size:5
    Feature type:Neurites
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    Smoothing scale:1
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    Enhancement method:Tubeness
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    Rescale result image:Yes

Threshold:[module_num:60|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notes:['']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
    Select the input image:toFindER_PeripheralEnhancedTubules
    Name the output image:toFindER_PeripheralThresholdedTubules_withEdges
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.02
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
ExpandOrShrinkObjects:[module_num:61|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notes:['']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
    Select the input objects:Cytoplasm
    Name the output objects:shrinked_Cytoplasm
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:2
    Fill holes in objects so that all objects shrink to a single point?:No

MaskImage:[module_num:62|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notes:['']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
    Select the input image:toFindER_PeripheralThresholdedTubules_withEdges
    Name the output image:toFindER_PeripheralThresholdedTubules_edgesRemoved
    Use objects or an image as a mask?:Objects
    Select object for mask:shrinked_Cytoplasm
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    Invert the mask?:No

ConvertImageToObjects:[module_num:63|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notes:['']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
    Select the input image:toFindER_PeripheralThresholdedTubules_edgesRemoved
    Name the output object:toFindER_PeripheralThresholdedTubules_edgesRemoved
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

RelateObjects:[module_num:64|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notes:['']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
    Parent objects:Cell
    Child objects:toFindER_PeripheralThresholdedTubules_edgesRemoved
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:65|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notes:['']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
    Select the input objects:toFindER_PeripheralThresholdedTubules_edgesRemoved
    Name the new objects:ER_tubules
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cell
    Output object type:Disconnected

Align:[module_num:66|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notes:['']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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

CombineObjects:[module_num:67|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notes:['']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
    Select initial object set:Perinuclear
    Select object set to combine:ER_tubules
    Select how to handle overlapping objects:Merge
    Name the combined object set:toFindERsignal_method2Plus_PerinuclearAndTubules

RelateObjects:[module_num:68|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notes:['']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
    Parent objects:Cell
    Child objects:toFindERsignal_method2Plus_PerinuclearAndTubules
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:69|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notes:['']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
    Select the input objects:toFindERsignal_method2Plus_PerinuclearAndTubules
    Name the new objects:ERsignal_method2Plus_PerinuclearAndTubules
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cell
    Output object type:Disconnected

Align:[module_num:70|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notes:['']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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

CombineObjects:[module_num:71|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notes:['']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
    Select initial object set:ERsignal_method1invertedHoles
    Select object set to combine:ERsignal_method2Plus_PerinuclearAndTubules
    Select how to handle overlapping objects:Merge
    Name the combined object set:CombinedObjects

RelateObjects:[module_num:72|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notes:['']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
    Parent objects:Cell
    Child objects:CombinedObjects
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:73|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notes:['']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
    Select the input objects:CombinedObjects
    Name the new objects:ERsignal_Method3
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cell
    Output object type:Disconnected

ExpandOrShrinkObjects:[module_num:74|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notes:['']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
    Select the input objects:Cell
    Name the output objects:ShrunkenCells_toFindGaps
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:10
    Fill holes in objects so that all objects shrink to a single point?:No

MaskObjects:[module_num:75|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
    Select objects to be masked:Cytoplasm
    Name the masked objects:CytoplasmRemovedEdges
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ShrunkenCells_toFindGaps
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:76|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
    Select objects to be masked:ERsignal_Method3
    Name the masked objects:ERsignal_method3RemovedEdge
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ShrunkenCells_toFindGaps
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

IdentifyTertiaryObjects:[module_num:77|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notes:['after that step, e.g., split, then relate individual holes („gaps") back to mother cells, relate as child objects, enable child object count ']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
    Select the larger identified objects:CytoplasmRemovedEdges
    Select the smaller identified objects:ERsignal_Method3
    Name the tertiary objects to be identified:Polygons_Method3_0pxl
    Shrink smaller object prior to subtraction?:No

CombineObjects:[module_num:78|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
    Select initial object set:Polygons_Method3_0pxl
    Select object set to combine:Polygons_Method3_0pxl
    Select how to handle overlapping objects:Merge
    Name the combined object set:Polygons

OverlayObjects:[module_num:79|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
    Input:Raw
    Name the output image:Overlaid_ERsignal_method3
    Objects:ERsignal_Method3
    Opacity:0.3

OverlayObjects:[module_num:80|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
    Input:Raw
    Name the output image:Overlaid_Polygons_method3
    Objects:Polygons_Method3_0pxl
    Opacity:0.3

ConvertObjectsToImage:[module_num:81|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notes:['Color format --> from Color to Binary']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
    Select the input objects:ERsignal_Method3
    Name the output image:ERsignal_Method3
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:82|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notes:['Color format --> from Color to Binary']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
    Select the input objects:Polygons_Method3_0pxl
    Name the output image:Polygons_Method3_0pxl
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:83|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
    Select the type of image to save:Image
    Select the image to save:Overlaid_ERsignal_method3
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlaid_ERsignal_method3
    Saved file format:tiff
    Output file location:Same folder as image|Desktop/20230228_CP_Documentation_TestRun
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:84|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
    Select the type of image to save:Image
    Select the image to save:ERsignal_Method3
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_ERMask_method3
    Saved file format:tiff
    Output file location:Same folder as image|Desktop/20230228_CP_Documentation_TestRun
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:85|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
    Select the type of image to save:Image
    Select the image to save:Polygons_Method3_0pxl
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Polygons_method3_0pxl
    Saved file format:tiff
    Output file location:Same folder as image|Desktop/20230228_CP_Documentation_TestRun
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

Align:[module_num:86|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notes:['In the following module, different versions of Opening will be tested simultaneously, e.g. opening with 2 or 3 pixels using a star shape, or erosion of 3, followed by dilation of 2 pixels, again using the stasr shape']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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

Opening:[module_num:87|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notes:['Seems to be the very same as „Disk 3"; keep this active and compare to „Star 3", using measurements', '', 'EDIT: Checking and comparing overlays of tubules with raws, there is no difference in tubule detection when using „Star 2" and „Star 3" and detecting tubules by substracting the Opening result from the ER mask.', 'Also regarding measurements, the result is precisely the same!']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
    Select the input image:ERsignal_Method3
    Name the output image:OpeningERsignal_Star_2
    Structuring element:Star,2

ConvertImageToObjects:[module_num:88|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
    Select the input image:OpeningERsignal_Star_2
    Name the output object:OpeningERsignal_Star_2
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

OverlayObjects:[module_num:89|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
    Input:Raw
    Name the output image:OverlayOpeningERsignal_Star_2
    Objects:OpeningERsignal_Star_2
    Opacity:0.3

SaveImages:[module_num:90|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
    Select the type of image to save:Image
    Select the image to save:OverlayOpeningERsignal_Star_2
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_OverlayOpeningERsignal_Star_2
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Overlays
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

Opening:[module_num:91|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notes:['comnpare directly with „Star 2", using measurements', '', 'EDIT: Checking and comparing overlays of tubules with raws, there is no difference in tubule detection when using „Star 2" and „Star 3" and detecting tubules by substracting the Opening result from the ER mask.', 'Also regarding measurements, the result is precisely the same!']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
    Select the input image:ERsignal_Method3
    Name the output image:OpeningERsignal_Star_3
    Structuring element:disk,3

ConvertImageToObjects:[module_num:92|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
    Select the input image:OpeningERsignal_Star_3
    Name the output object:OpeningERsignal_Star_3
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

OverlayObjects:[module_num:93|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
    Input:Raw
    Name the output image:OverlayOpeningERsignal_Star_3
    Objects:OpeningERsignal_Star_3
    Opacity:0.3

SaveImages:[module_num:94|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
    Select the type of image to save:Image
    Select the image to save:OverlayOpeningERsignal_Star_3
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_OverlayOpeningERsignal_Star_3
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Overlays
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ErodeImage:[module_num:95|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
    Select the input image:ERsignal_Method3
    Name the output image:Eroded3ERsignal
    Structuring element:star,3

DilateImage:[module_num:96|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
    Select the input image:Eroded3ERsignal
    Name the output image:Dilate2Eroded3ERsignal
    Structuring element:star,2

ConvertImageToObjects:[module_num:97|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
    Select the input image:Dilate2Eroded3ERsignal
    Name the output object:Dilate_2_Eroded_3_ERsignal
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

OverlayObjects:[module_num:98|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
    Input:Raw
    Name the output image:OverlayDilate_2_Eroded_3_ERsignal
    Objects:Dilate_2_Eroded_3_ERsignal
    Opacity:0.3

SaveImages:[module_num:99|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
    Select the type of image to save:Image
    Select the image to save:OverlayDilate_2_Eroded_3_ERsignal
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_OverlayDilated_2:Eroded_3_ERsignal
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Overlays
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ErodeImage:[module_num:100|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
    Select the input image:ERsignal_Method3
    Name the output image:Eroded2ERsignal
    Structuring element:star,2

DilateImage:[module_num:101|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
    Select the input image:Eroded3ERsignal
    Name the output image:Dilate1Eroded2ERsignal
    Structuring element:star,1

ConvertImageToObjects:[module_num:102|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
    Select the input image:Dilate1Eroded2ERsignal
    Name the output object:Dilate_1_Eroded_2_ERsignal
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

OverlayObjects:[module_num:103|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
    Input:Raw
    Name the output image:OverlayDilate_1_Eroded_2_ERsignal
    Objects:Dilate_1_Eroded_2_ERsignal
    Opacity:0.3

SaveImages:[module_num:104|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
    Select the type of image to save:Image
    Select the image to save:OverlayDilate_1_Eroded_2_ERsignal
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_OverlayDilated_1_Eroded_2_ERsignal
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Overlays
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

Align:[module_num:105|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notes:['in the following module, the resulting opened (or forst eroded, then dilated) ER masks derived from the previous module will be substracted from the original ER mask. After filtering out artifacts of one or two pixels in size, the result should reveal a mask of ER tubules or, depending on the settings, high curvature ER (e.g. tubules and sheet edges).']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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

ImageMath:[module_num:106|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notes:['EDIT: Checking and comparing overlays of tubules with raws, there is no difference in tubule detection when using „Star 2" and „Star 3" and detecting tubules by substracting the Opening result from the ER mask.', 'Also regarding measurements, the result is precisely the same!']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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ErodedTubules_Star_2
    Image or measurement?:Image
    Select the first image:ERsignal_Method3
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:OpeningERsignal_Star_2
    Multiply the second image by:1.0
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
ConvertImageToObjects:[module_num:107|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
    Select the input image:ErodedTubules_Star_2
    Name the output object:ErodedTubules_Star_2_ToBeFiltered
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

MeasureObjectSizeShape:[module_num:108|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
    Select object sets to measure:ErodedTubules_Star_2_ToBeFiltered
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:109|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
    Select the objects to filter:ErodedTubules_Star_2_ToBeFiltered
    Name the output objects:ErodedTubules_Star_2
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:3
    Filter using a maximum measurement value?:No
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
RelateObjects:[module_num:110|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
    Parent objects:Cell
    Child objects:ErodedTubules_Star_2
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:111|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
    Select the input objects:ErodedTubules_Star_2
    Name the new objects:Tubules_Star_2
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cell
    Output object type:Disconnected

OverlayObjects:[module_num:112|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
    Input:Raw
    Name the output image:OverlayTubules_Star_2
    Objects:Tubules_Star_2
    Opacity:0.3

SaveImages:[module_num:113|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
    Select the type of image to save:Image
    Select the image to save:OverlayTubules_Star_2
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_OverlayTubules_Star_2
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Overlays
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ImageMath:[module_num:114|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notes:['EDIT: Checking and comparing overlays of tubules with raws, there is no difference in tubule detection when using „Star 2" and „Star 3" and detecting tubules by substracting the Opening result from the ER mask.', 'Also regarding measurements, the result is precisely the same!']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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ErodedTubules_Star_3
    Image or measurement?:Image
    Select the first image:ERsignal_Method3
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:OpeningERsignal_Star_3
    Multiply the second image by:1.0
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
ConvertImageToObjects:[module_num:115|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
    Select the input image:ErodedTubules_Star_3
    Name the output object:ErodedTubules_Star_3_ToBeFiltered
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

MeasureObjectSizeShape:[module_num:116|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
    Select object sets to measure:ErodedTubules_Star_3_ToBeFiltered
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:117|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
    Select the objects to filter:ErodedTubules_Star_2_ToBeFiltered
    Name the output objects:ErodedTubules_Star_3
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:3
    Filter using a maximum measurement value?:No
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
RelateObjects:[module_num:118|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
    Parent objects:Cell
    Child objects:ErodedTubules_Star_3
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:119|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
    Select the input objects:ErodedTubules_Star_3
    Name the new objects:Tubules_Star_3
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cell
    Output object type:Disconnected

OverlayObjects:[module_num:120|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
    Input:Raw
    Name the output image:OverlayTubules_Star_3
    Objects:Tubules_Star_3
    Opacity:0.3

SaveImages:[module_num:121|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
    Select the type of image to save:Image
    Select the image to save:OverlayTubules_Star_3
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_OverlayTubules_Star_3
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Overlays
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ImageMath:[module_num:122|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ErodedTubules_Erosion_3_Dilation_2
    Image or measurement?:Image
    Select the first image:ERsignal_Method3
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Dilate2Eroded3ERsignal
    Multiply the second image by:1.0
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
ConvertImageToObjects:[module_num:123|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
    Select the input image:ErodedTubules_Erosion_3_Dilation_2
    Name the output object:ErodedHighCurvatureER_Erosion_3_Dilation_2_ToBeFiltered
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

MeasureObjectSizeShape:[module_num:124|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
    Select object sets to measure:ErodedHighCurvatureER_Erosion_3_Dilation_2_ToBeFiltered
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:125|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
    Select the objects to filter:ErodedHighCurvatureER_Erosion_3_Dilation_2_ToBeFiltered
    Name the output objects:ErodedHighCurvatureER_Erosion_3_Dilation_2
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:3
    Filter using a maximum measurement value?:No
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
RelateObjects:[module_num:126|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
    Parent objects:Cell
    Child objects:ErodedHighCurvatureER_Erosion_3_Dilation_2
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:127|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
    Select the input objects:ErodedHighCurvatureER_Erosion_3_Dilation_2
    Name the new objects:HighCurvatureER_Erosion_3_Dilation_2
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cell
    Output object type:Disconnected

OverlayObjects:[module_num:128|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
    Input:Raw
    Name the output image:OverlayHighCurvatureER_Erosion_3_Dilation_2
    Objects:HighCurvatureER_Erosion_3_Dilation_2
    Opacity:0.3

SaveImages:[module_num:129|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
    Select the type of image to save:Image
    Select the image to save:OverlayHighCurvatureER_Erosion_3_Dilation_2
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_OverlayHighCurvatureER_Erosion_3_Dilation_2
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Overlays
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ImageMath:[module_num:130|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ErodedTubules_Erosion_2_Dilation_1
    Image or measurement?:Image
    Select the first image:ERsignal_Method3
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Dilate1Eroded2ERsignal
    Multiply the second image by:1.0
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
ConvertImageToObjects:[module_num:131|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
    Select the input image:ErodedTubules_Erosion_2_Dilation_1
    Name the output object:ErodedHighCurvatureER_Erosion_2_Dilation_1_ToBeFiltered
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

MeasureObjectSizeShape:[module_num:132|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
    Select object sets to measure:ErodedHighCurvatureER_Erosion_2_Dilation_1_ToBeFiltered
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:133|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
    Select the objects to filter:ErodedHighCurvatureER_Erosion_2_Dilation_1_ToBeFiltered
    Name the output objects:ErodedHighCurvatureER_Erosion_2_Dilation_1
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:3
    Filter using a maximum measurement value?:No
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
RelateObjects:[module_num:134|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
    Parent objects:Cell
    Child objects:ErodedHighCurvatureER_Erosion_2_Dilation_1
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:135|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
    Select the input objects:ErodedHighCurvatureER_Erosion_2_Dilation_1
    Name the new objects:HighCurvatureER_Erosion_2_Dilation_1
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cell
    Output object type:Disconnected

OverlayObjects:[module_num:136|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
    Input:Raw
    Name the output image:OverlayHighCurvatureER_Erosion_2_Dilation_1
    Objects:HighCurvatureER_Erosion_2_Dilation_1
    Opacity:0.3

SaveImages:[module_num:137|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
    Select the type of image to save:Image
    Select the image to save:OverlayHighCurvatureER_Erosion_2_Dilation_1
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_OverlayHighCurvatureER_Erosion_2_Dilation_1
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Overlays
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

Align:[module_num:138|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notes:['In this module, the masks retrieved for ER tubules or high curvature ER are substracted from the original ER mask to obtain a mask for ER sheets or low curvature ER.']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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

MaskObjects:[module_num:139|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notes:['For Opening_Star_2: masking the original ERsignal with the output of the Opening (e.g. Tubules), yielding tubules from original ERsignal', '', 'EDIT: Checking and comparing overlays of tubules with raws, there is no difference in tubule detection when using „Star 2" and „Star 3" and detecting tubules by substracting the Opening result from the ER mask.', 'Also regarding measurements, the result is precisely the same!']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
    Select objects to be masked:ERsignal_Method3
    Name the masked objects:Masked_Tubules_Star_2
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Tubules_Star_2
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:No

RelateObjects:[module_num:140|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
    Parent objects:Cell
    Child objects:Masked_Tubules_Star_2
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:141|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
    Select the input objects:Masked_Tubules_Star_2
    Name the new objects:Merged_Tubules_Star_2
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cell
    Output object type:Disconnected

MaskObjects:[module_num:142|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notes:['For Opening_Star_2: masking the original ERsignal with the INVERTED output of the Opening (e.g. Tubules), yielding sheets from original ERsignal', '', 'EDIT: Checking and comparing overlays of tubules with raws, there is no difference in tubule detection when using „Star 2" and „Star 3" and detecting tubules by substracting the Opening result from the ER mask.', 'Also regarding measurements, the result is precisely the same!']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
    Select objects to be masked:ERsignal_Method3
    Name the masked objects:Masked_Sheets_Star_2
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Tubules_Star_2
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:Yes

RelateObjects:[module_num:143|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
    Parent objects:Cell
    Child objects:Masked_Sheets_Star_2
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:144|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
    Select the input objects:Masked_Sheets_Star_2
    Name the new objects:Merged_Sheets_Star_2
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cell
    Output object type:Disconnected

MaskObjects:[module_num:145|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notes:['For Opening_Star_3: masking the original ERsignal with the output of the Opening (e.g. Tubules), yielding tubules from original ERsignal', '', 'EDIT: Checking and comparing overlays of tubules with raws, there is no difference in tubule detection when using „Star 2" and „Star 3" and detecting tubules by substracting the Opening result from the ER mask.', 'Also regarding measurements, the result is precisely the same!']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
    Select objects to be masked:ERsignal_Method3
    Name the masked objects:Masked_Tubules_Star_3
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Tubules_Star_3
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:No

RelateObjects:[module_num:146|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
    Parent objects:Cell
    Child objects:Masked_Tubules_Star_3
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:147|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
    Select the input objects:Masked_Tubules_Star_3
    Name the new objects:Merged_Tubules_Star_3
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cell
    Output object type:Disconnected

MaskObjects:[module_num:148|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notes:['For Opening_Star_3: masking the original ERsignal with the INVERTED output of the Opening (e.g. Tubules), yielding sheets from original ERsignal', '', 'EDIT: Checking and comparing overlays of tubules with raws, there is no difference in tubule detection when using „Star 2" and „Star 3" and detecting tubules by substracting the Opening result from the ER mask.', 'Also regarding measurements, the result is precisely the same!']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
    Select objects to be masked:ERsignal_Method3
    Name the masked objects:Masked_Sheets_Star_3
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Tubules_Star_3
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:Yes

RelateObjects:[module_num:149|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
    Parent objects:Cell
    Child objects:Masked_Sheets_Star_3
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:150|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
    Select the input objects:Masked_Sheets_Star_3
    Name the new objects:Merged_Sheets_Star_3
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cell
    Output object type:Disconnected

MaskObjects:[module_num:151|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notes:['For HighCurvatureER_Erosion_3_Dilation_2: masking the original ERsignal with the output of the Erosion/Dilation (e.g. HighCurvatureER), yielding high curvature ER from original ERsignal']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
    Select objects to be masked:ERsignal_Method3
    Name the masked objects:Masked_HighCurvatureER_Erosion_3_Dilation_2
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:HighCurvatureER_Erosion_3_Dilation_2
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:No

RelateObjects:[module_num:152|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
    Parent objects:Cell
    Child objects:Masked_HighCurvatureER_Erosion_3_Dilation_2
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:153|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
    Select the input objects:Masked_HighCurvatureER_Erosion_3_Dilation_2
    Name the new objects:Merged_HighCurvatureER_Erosion_3_Dilation_2
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cell
    Output object type:Disconnected

MaskObjects:[module_num:154|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notes:['For HighCurvatureER_Erosion_3_Dilation_2: masking the original ERsignal with the INVERTED output of the Erosion/Dilation (e.g. HighCurvatureER), yielding lowcurvature ER from original ERsignal']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
    Select objects to be masked:ERsignal_Method3
    Name the masked objects:Masked_LowCurvatureER_Erosion_3_Dilation_2
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:HighCurvatureER_Erosion_3_Dilation_2
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:Yes

RelateObjects:[module_num:155|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
    Parent objects:Cell
    Child objects:Masked_LowCurvatureER_Erosion_3_Dilation_2
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:156|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
    Select the input objects:Masked_LowCurvatureER_Erosion_3_Dilation_2
    Name the new objects:Merged_LowCurvatureER_Erosion_3_Dilation_2
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cell
    Output object type:Disconnected

MaskObjects:[module_num:157|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notes:['For HighCurvatureER_Erosion_2_Dilation_1: masking the original ERsignal with the output of the Erosion/Dilation (e.g. HighCurvatureER), yielding high curvature ER from original ERsignal']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
    Select objects to be masked:ERsignal_Method3
    Name the masked objects:Masked_HighCurvatureER_Erosion_2_Dilation_1
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:HighCurvatureER_Erosion_2_Dilation_1
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:No

RelateObjects:[module_num:158|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
    Parent objects:Cell
    Child objects:Masked_HighCurvatureER_Erosion_2_Dilation_1
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:159|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
    Select the input objects:Masked_HighCurvatureER_Erosion_2_Dilation_1
    Name the new objects:Merged_HighCurvatureER_Erosion_2_Dilation_1
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cell
    Output object type:Disconnected

MaskObjects:[module_num:160|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notes:['For HighCurvatureER_Erosion_2_Dilation_1: masking the original ERsignal with the INVERTED output of the Erosion/Dilation (e.g. HighCurvatureER), yielding lowcurvature ER from original ERsignal']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
    Select objects to be masked:ERsignal_Method3
    Name the masked objects:Masked_LowCurvatureER_Erosion_2_Dilation_1
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:HighCurvatureER_Erosion_2_Dilation_1
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:Yes

RelateObjects:[module_num:161|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
    Parent objects:Cell
    Child objects:Masked_LowCurvatureER_Erosion_2_Dilation_1
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:162|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
    Select the input objects:Masked_LowCurvatureER_Erosion_2_Dilation_1
    Name the new objects:Merged_LowCurvatureER_Erosion_2_Dilation_1
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cell
    Output object type:Disconnected

Align:[module_num:163|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notes:['Alternative Idea to MaskObjects approach used in the previous module']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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

ExportToSpreadsheet:[module_num:164|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:ERsignal_Method3|AreaShape_Area,Cell|Children_Polygons_Count,Cell|AreaShape_Area,Cell|AreaShape_MaxFeretDiameter,Cell|AreaShape_Perimeter,Cell|AreaShape_MinFeretDiameter,Cytoplasm|AreaShape_Area,Merged_LowCurvatureER_Erosion_2_Dilation_1|AreaShape_Area,Merged_HighCurvatureER_Erosion_3_Dilation_2|AreaShape_Area,Merged_Tubules_Star_3|AreaShape_Area,Merged_Sheets_Star_2|AreaShape_Area,Merged_Tubules_Star_2|AreaShape_Area,Merged_HighCurvatureER_Erosion_2_Dilation_1|AreaShape_Area,Merged_LowCurvatureER_Erosion_3_Dilation_2|AreaShape_Area,Merged_Sheets_Star_3|AreaShape_Area
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Measurements_
    Overwrite existing files without warning?:No
    Data to export:Cell
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Cytoplasm
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:ERsignal_Method3
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Merged_HighCurvatureER_Erosion_2_Dilation_1
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Merged_LowCurvatureER_Erosion_2_Dilation_1
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Merged_HighCurvatureER_Erosion_3_Dilation_2
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Merged_LowCurvatureER_Erosion_3_Dilation_2
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Merged_Tubules_Star_2
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Merged_Sheets_Star_2
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Merged_Tubules_Star_3
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Merged_Sheets_Star_3
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

Align:[module_num:165|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notes:['']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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

RelateObjects:[module_num:166|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
    Parent objects:Cell
    Child objects:Polygons
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:167|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
    Select the input objects:Polygons
    Name the new objects:Polygon_perCell
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cell
    Output object type:Disconnected

MeasureObjectSizeShape:[module_num:168|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notes:['Measurements for only the high/low curvature separation part!']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
    Select object sets to measure:Merged_HighCurvatureER_Erosion_2_Dilation_1, Merged_HighCurvatureER_Erosion_3_Dilation_2, Merged_LowCurvatureER_Erosion_2_Dilation_1, Merged_LowCurvatureER_Erosion_3_Dilation_2, Merged_Sheets_Star_2, Merged_Sheets_Star_3, Merged_Tubules_Star_2, Merged_Tubules_Star_3
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectSizeShape:[module_num:169|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notes:['Main measurements']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
    Select object sets to measure:Cell, Cytoplasm, CytoplasmRemovedEdges, ERsignal_Method3, ERsignal_method3RemovedEdge, Nuclei, Polygon_perCell, Polygons, Polygons_Method3_0pxl
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:170|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
    Select images to measure:Raw
    Select objects to measure:Cell, Cytoplasm, ERsignal_Method3, Nuclei, Polygons, Polygons_Method3_0pxl

ExportToSpreadsheet:[module_num:171|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notes:['Exporting the Measurements for only the high/low curvature separation part!']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:ERsignal_Method3|AreaShape_Area,Cell|Children_Polygons_Count,Cell|AreaShape_Area,Cell|AreaShape_MaxFeretDiameter,Cell|AreaShape_Perimeter,Cell|AreaShape_MinFeretDiameter,Cytoplasm|AreaShape_Area,Merged_LowCurvatureER_Erosion_2_Dilation_1|AreaShape_Area,Merged_HighCurvatureER_Erosion_3_Dilation_2|AreaShape_Area,Merged_Tubules_Star_3|AreaShape_Area,Merged_Sheets_Star_2|AreaShape_Area,Merged_Tubules_Star_2|AreaShape_Area,Merged_HighCurvatureER_Erosion_2_Dilation_1|AreaShape_Area,Merged_LowCurvatureER_Erosion_3_Dilation_2|AreaShape_Area,Merged_Sheets_Star_3|AreaShape_Area
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Measurements_
    Overwrite existing files without warning?:Yes
    Data to export:Cell
    Combine these object measurements with those of the previous object?:No
    File name:CombinedOutput.csv
    Use the object name for the file name?:No
    Data to export:Cytoplasm
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:ERsignal_Method3
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:Merged_HighCurvatureER_Erosion_2_Dilation_1
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:Merged_LowCurvatureER_Erosion_2_Dilation_1
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:Merged_HighCurvatureER_Erosion_3_Dilation_2
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:Merged_LowCurvatureER_Erosion_3_Dilation_2
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:Merged_Tubules_Star_2
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:Merged_Sheets_Star_2
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:Merged_Tubules_Star_3
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:Merged_Sheets_Star_3
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes

ExportToSpreadsheet:[module_num:172|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notes:['Exporting the main measurements']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|Results
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Cell|Intensity_IntegratedIntensity_Raw,Cell|Intensity_MedianIntensity_Raw,Cell|Intensity_MassDisplacement_Raw,Cell|Intensity_MeanIntensity_Raw,Cell|Intensity_UpperQuartileIntensity_Raw,Cell|Intensity_LowerQuartileIntensity_Raw,Cell|RadialDistribution_FracAtD_Raw_10of10,Cell|RadialDistribution_FracAtD_Raw_1of10,Cell|RadialDistribution_FracAtD_Raw_4of10,Cell|RadialDistribution_FracAtD_Raw_7of10,Cell|RadialDistribution_FracAtD_Raw_8of10,Cell|RadialDistribution_FracAtD_Raw_3of10,Cell|RadialDistribution_FracAtD_Raw_2of10,Cell|RadialDistribution_FracAtD_Raw_6of10,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Measurements_
    Overwrite existing files without warning?:Yes
    Data to export:Cell
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:CytoplasmRemovedEdges
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:ERsignal_method3RemovedEdge
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Polygons_Method3_0pxl
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Cell
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
