CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:97
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['']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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "mask")
    Name to assign these images:Mask
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file doesnot contain "mask")
    Name to assign these images:Raw
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['']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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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notes:['']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
    Select the input image:Mask
    Name the output image:Mask_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
ConvertImageToObjects:[module_num:6|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notes:['']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
    Select the input image:Mask
    Name the output object:Mask
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

EnhanceOrSuppressFeatures:[module_num:7|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notes:['']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
    Select the input image:Raw
    Name the output image:EnhancedNucleusHoles
    Select the operation:Enhance
    Feature size:10
    Feature type:Dark holes
    Range of hole sizes:50,250
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
MeasureObjectSizeShape:[module_num:8|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notes:['']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
    Select object sets to measure:Mask
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:9|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notes:['']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
    Select the objects to filter:Mask
    Name the output objects:Mask_ArtifactRemoved
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:12000
    Filter using a maximum measurement value?:No
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
Threshold:[module_num:10|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notes:['']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
    Select the input image:EnhancedNucleusHoles
    Name the output image:EnhancedNucleusHoles_Mask
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:0.1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:11|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notes:['']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
    Select the input image:EnhancedNucleusHoles_Mask
    Name the primary objects to be identified:toFindNuclei
    Typical diameter of objects, in pixel units (Min,Max):80,250
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.01
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
MeasureObjectSizeShape:[module_num:12|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notes:['']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
    Select object sets to measure:toFindNuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:13|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notes:['']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
    Select the objects to filter:toFindNuclei
    Name the output objects:toFindNuclei_Filtered
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:0.3
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0

DilateObjects:[module_num:14|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notes:['']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
    Select the input object:toFindNuclei_Filtered
    Name the output object:Nuclei
    Structuring element:disk,3

ConvertObjectsToImage:[module_num:15|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notes:['']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
    Select the input objects:Nuclei
    Name the output image:Nuclei
    Select the color format:Grayscale
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
SaveImages:[module_num:16|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:Nuclei
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_NucleiMasks
    Saved file format:tiff
    Output file location:Same folder as image|Desktop/20230228_CP_Documentation_TestRun
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

OverlayObjects:[module_num:17|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notes:['']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
    Input:Raw
    Name the output image:OverlayObjects
    Objects:Nuclei
    Opacity:0.3

Align:[module_num:18|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notes:['']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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

IdentifySecondaryObjects:[module_num:19|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notes:['']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
    Select the input objects:Nuclei
    Name the objects to be identified:CellBordersWithCP
    Select the method to identify the secondary objects:Propagation
    Select the input image:Raw
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:10
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:Yes
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
MaskObjects:[module_num:20|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notes:['']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
    Select objects to be masked:Mask_ArtifactRemoved
    Name the masked objects:CellAll
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CellBordersWithCP
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:No

RelateObjects:[module_num:21|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notes:['']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
    Parent objects:Nuclei
    Child objects:CellAll
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:22|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notes:['']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
    Select the input objects:CellAll
    Name the new objects:CellNoNuclei
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Nuclei
    Output object type:Disconnected

FilterObjects:[module_num:23|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notes:['']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
    Select the objects to filter:CellNoNuclei
    Name the output objects:Cell
    Select the filtering mode:Image or mask border
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    Additional object count:0
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    Keep removed objects as a seperate set?:Yes
    Name the objects removed by the filter:RemovedCells
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
ConvertObjectsToImage:[module_num:24|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notes:['']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
    Select the input objects:CellAll
    Name the output image:CellAll
    Select the color format:Grayscale
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
SaveImages:[module_num:25|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notes:['']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enabled:False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
    Select the type of image to save:Image
    Select the image to save:CellAll
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CellsIncludingTouchingBorders
    Saved file format:tiff
    Output file location:Same folder as image|Desktop/20230228_CP_Documentation_TestRun
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ConvertObjectsToImage:[module_num:26|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notes:['']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
    Select the input objects:Cell
    Name the output image:Cell
    Select the color format:Grayscale
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
SaveImages:[module_num:27|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:Cell
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CellMasks
    Saved file format:tiff
    Output file location:Same folder as image|Desktop/20230228_CP_Documentation_TestRun
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

Align:[module_num:28|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notes:['']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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

IdentifyTertiaryObjects:[module_num:29|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notes:['']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
    Select the larger identified objects:Cell
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

ConvertObjectsToImage:[module_num:30|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notes:['']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
    Select the input objects:Cytoplasm
    Name the output image:Cytoplasm
    Select the color format:Grayscale
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
SaveImages:[module_num:31|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:Cytoplasm
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CytoplasmMask
    Saved file format:tiff
    Output file location:Same folder as image|Desktop/20230228_CP_Documentation_TestRun
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MaskImage:[module_num:32|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notes:['']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
    Select the input image:Raw
    Name the output image:CytoplasmMasked
    Use objects or an image as a mask?:Objects
    Select object for mask:Cytoplasm
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    Invert the mask?:No

MeasureObjectIntensity:[module_num:33|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notes:['']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
    Select images to measure:Raw
    Select objects to measure:Cytoplasm

MeasureObjectSizeShape:[module_num:34|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notes:['']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
    Select object sets to measure:Cell, Cytoplasm, Nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureObjectIntensityDistribution:[module_num:35|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notes:['']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
    Select images to measure:Raw
    Hidden:1
    Hidden:1
    Hidden:1
    Calculate intensity Zernikes?:None
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    Select objects to measure:Cell
    Object to use as center?:Edges of other objects
    Select objects to use as centers:Nuclei
    Scale the bins?:Yes
    Number of bins:10
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    Image:None
    Objects to display:Do not use
    Number of bins:3
    Measurement:Mean Fraction
    Color map:Default
    Save display as image?:Yes
    Output image name:CytoplasmRID

SaveImages:[module_num:36|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:CytoplasmRID
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CytoplasmRID
    Saved file format:tiff
    Output file location:Same folder as image|Desktop/20230228_CP_Documentation_TestRun
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

Align:[module_num:37|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notes:['deals with perinuclear and peripheral region. Is that still required?']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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

Threshold:[module_num:38|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notes:['']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
    Select the input image:CytoplasmMasked
    Name the output image:toFindPerinuclearArea
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:10
    Threshold correction factor:2.2
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:Yes
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
IdentifyPrimaryObjects:[module_num:39|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notes:['']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
    Select the input image:toFindPerinuclearArea
    Name the primary objects to be identified:Perinuclear
    Typical diameter of objects, in pixel units (Min,Max):100,500
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.9
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
IdentifyTertiaryObjects:[module_num:40|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notes:['']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
    Select the larger identified objects:Cytoplasm
    Select the smaller identified objects:Perinuclear
    Name the tertiary objects to be identified:toFindPeripheralArea
    Shrink smaller object prior to subtraction?:No

RelateObjects:[module_num:41|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notes:['']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
    Parent objects:Cell
    Child objects:toFindPeripheralArea
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:42|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notes:['']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
    Select the input objects:toFindPeripheralArea
    Name the new objects:Peripheral
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cell
    Output object type:Disconnected

OverlayObjects:[module_num:43|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notes:['']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
    Input:Raw
    Name the output image:Overlaid_PerinuclearArea
    Objects:Perinuclear
    Opacity:0.3

OverlayObjects:[module_num:44|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notes:['']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
    Input:Raw
    Name the output image:Overlaid_PeripheralArea
    Objects:Peripheral
    Opacity:0.3

OverlayOutlines:[module_num:45|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notes:['']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Raw
    Name the output image:Overlaid_PerinuclearAndPeripheralBorders
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:Cytoplasm
    Select outline color:Green
    Select objects to display:Perinuclear

MaskImage:[module_num:46|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notes:['']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
    Select the input image:Raw
    Name the output image:PeripheralMasked
    Use objects or an image as a mask?:Objects
    Select object for mask:Peripheral
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    Invert the mask?:No

SaveImages:[module_num:47|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:Overlaid_PerinuclearAndPeripheralBorders
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlaid_PerinuclearAndPeripheralBorders
    Saved file format:tiff
    Output file location:Same folder as image|Desktop/20230228_CP_Documentation_TestRun
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:48|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:Overlaid_PerinuclearArea
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlaid_PerinuclearArea
    Saved file format:tiff
    Output file location:Same folder as image|Desktop/20230228_CP_Documentation_TestRun
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:49|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:Overlaid_PeripheralArea
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlaid_PeripheralArea
    Saved file format:tiff
    Output file location:Same folder as image|Desktop/20230228_CP_Documentation_TestRun
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

Align:[module_num:50|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notes:['']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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

EnhanceOrSuppressFeatures:[module_num:51|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notes:['start method 1']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
    Select the input image:CytoplasmMasked
    Name the output image:CytoplasmEnhancedHoles
    Select the operation:Enhance
    Feature size:20
    Feature type:Dark holes
    Range of hole sizes:1,30
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
ConvertImageToObjects:[module_num:52|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notes:['']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
    Select the input image:CytoplasmEnhancedHoles
    Name the output object:CytoplasmEnhancedHoles
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

MaskObjects:[module_num:53|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notes:['']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
    Select objects to be masked:CytoplasmEnhancedHoles
    Name the masked objects:CytoplasmEnhancedHoles_CytoArea
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Cytoplasm
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

IdentifyTertiaryObjects:[module_num:54|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notes:['']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
    Select the larger identified objects:Cytoplasm
    Select the smaller identified objects:CytoplasmEnhancedHoles_CytoArea
    Name the tertiary objects to be identified:ERsignal_method1invertedHoles
    Shrink smaller object prior to subtraction?:No

ExpandOrShrinkObjects:[module_num:55|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notes:['']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
    Select the input objects:Cell
    Name the output objects:ShrunkenCells
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:2
    Fill holes in objects so that all objects shrink to a single point?:No

IdentifyTertiaryObjects:[module_num:56|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notes:['']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
    Select the larger identified objects:Cell
    Select the smaller identified objects:ShrunkenCells
    Name the tertiary objects to be identified:Cell_perimeter
    Shrink smaller object prior to subtraction?:Yes

MaskObjects:[module_num:57|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notes:['']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
    Select objects to be masked:CytoplasmEnhancedHoles_CytoArea
    Name the masked objects:CytoplasmEnhancedHoles_CytoArea_NoMarginalPolygons
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Cell_perimeter
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:1
    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MeasureObjectSizeShape:[module_num:58|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notes:['altered (peripheral polygons unchecked) ', '', 'Note: we might need to uncheck the CytoplasmEnhancedHoles_CytoArea']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
    Select object sets to measure:CytoplasmEnhancedHoles_CytoArea, CytoplasmEnhancedHoles_CytoArea_NoMarginalPolygons
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:59|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notes:["Note: We unchecked the 'save removed objects as separate set'"]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
    Select the objects to filter:CytoplasmEnhancedHoles_CytoArea_NoMarginalPolygons
    Name the output objects:CytoplasmEnhancedHoles_CytoArea_NoMarginalPolygons_filteredSmallObjs
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:5
    Filter using a maximum measurement value?:No
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
RelateObjects:[module_num:60|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notes:['altered - does this now allow gap counting (results displayed in Cell results file as individual column named „RelatedObjects_Children_Bla")', '', "Note: 'save parents as a new object set' is now unchecked"]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
    Parent objects:Cell
    Child objects:CytoplasmEnhancedHoles_CytoArea_NoMarginalPolygons_filteredSmallObjs
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:61|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notes:['']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
    Select the input objects:CytoplasmEnhancedHoles_CytoArea_NoMarginalPolygons_filteredSmallObjs
    Name the new objects:PolygonsCyto_Method1Holes
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cell
    Output object type:Disconnected

Align:[module_num:62|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notes:['']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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

EnhanceOrSuppressFeatures:[module_num:63|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notes:['']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
    Select the input image:PeripheralMasked
    Name the output image:toFindER_PeripheralEnhancedTubules
    Select the operation:Enhance
    Feature size:5
    Feature type:Neurites
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    Smoothing scale:1
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    Enhancement method:Tubeness
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    Rescale result image:Yes

Threshold:[module_num:64|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notes:['']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
    Select the input image:toFindER_PeripheralEnhancedTubules
    Name the output image:toFindER_PeripheralThresholdedTubules_withEdges
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.02
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
ExpandOrShrinkObjects:[module_num:65|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notes:['']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
    Select the input objects:Cytoplasm
    Name the output objects:shrinked_Cytoplasm
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:2
    Fill holes in objects so that all objects shrink to a single point?:No

MaskImage:[module_num:66|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notes:['']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
    Select the input image:toFindER_PeripheralThresholdedTubules_withEdges
    Name the output image:toFindER_PeripheralThresholdedTubules_edgesRemoved
    Use objects or an image as a mask?:Objects
    Select object for mask:shrinked_Cytoplasm
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    Invert the mask?:No

ConvertImageToObjects:[module_num:67|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notes:['']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
    Select the input image:toFindER_PeripheralThresholdedTubules_edgesRemoved
    Name the output object:toFindER_PeripheralThresholdedTubules_edgesRemoved
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

RelateObjects:[module_num:68|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notes:['']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
    Parent objects:Cell
    Child objects:toFindER_PeripheralThresholdedTubules_edgesRemoved
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:69|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notes:['']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
    Select the input objects:toFindER_PeripheralThresholdedTubules_edgesRemoved
    Name the new objects:ER_tubules
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cell
    Output object type:Disconnected

ConvertObjectsToImage:[module_num:70|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notes:['']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
    Select the input objects:ER_tubules
    Name the output image:ER_tubules
    Select the color format:Color
    Select the colormap:Default

OverlayObjects:[module_num:71|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notes:['']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
    Input:Raw
    Name the output image:Overlaid_ER_tubules
    Objects:ER_tubules
    Opacity:0.4

SaveImages:[module_num:72|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:Overlaid_ER_tubules
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlaid_ER_Tubules
    Saved file format:tiff
    Output file location:Same folder as image|Desktop/20230228_CP_Documentation_TestRun
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

Align:[module_num:73|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notes:['']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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

CombineObjects:[module_num:74|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notes:['']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
    Select initial object set:Perinuclear
    Select object set to combine:ER_tubules
    Select how to handle overlapping objects:Merge
    Name the combined object set:toFindERsignal_method2Plus_PerinuclearAndTubules

RelateObjects:[module_num:75|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notes:['']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
    Parent objects:Cell
    Child objects:toFindERsignal_method2Plus_PerinuclearAndTubules
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:76|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notes:['']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
    Select the input objects:toFindERsignal_method2Plus_PerinuclearAndTubules
    Name the new objects:ERsignal_method2Plus_PerinuclearAndTubules
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cell
    Output object type:Disconnected

OverlayObjects:[module_num:77|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notes:['']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
    Input:Raw
    Name the output image:Overlaid_ERsignal_method2Plus_PerinuclearAndTubules
    Objects:ERsignal_method2Plus_PerinuclearAndTubules
    Opacity:0.7

SaveImages:[module_num:78|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:Overlaid_ERsignal_method2Plus_PerinuclearAndTubules
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlaid_ERsignal_method2Plus_PerinuclearAndTubules
    Saved file format:tiff
    Output file location:Same folder as image|Desktop/20230228_CP_Documentation_TestRun
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

Align:[module_num:79|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notes:['']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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

CombineObjects:[module_num:80|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notes:['']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
    Select initial object set:ERsignal_method1invertedHoles
    Select object set to combine:ERsignal_method2Plus_PerinuclearAndTubules
    Select how to handle overlapping objects:Merge
    Name the combined object set:CombinedObjects

RelateObjects:[module_num:81|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notes:['']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
    Parent objects:Cell
    Child objects:CombinedObjects
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:82|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notes:['']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
    Select the input objects:CombinedObjects
    Name the new objects:ERsignal_Method3
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cell
    Output object type:Disconnected

ExpandOrShrinkObjects:[module_num:83|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notes:['']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
    Select the input objects:Cell
    Name the output objects:ShrunkenCells_toFindGaps
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:10
    Fill holes in objects so that all objects shrink to a single point?:No

MaskObjects:[module_num:84|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
    Select objects to be masked:Cytoplasm
    Name the masked objects:CytoplasmRemovedEdges
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ShrunkenCells_toFindGaps
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:85|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
    Select objects to be masked:ERsignal_Method3
    Name the masked objects:ERsignal_method3RemovedEdge
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ShrunkenCells_toFindGaps
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

IdentifyTertiaryObjects:[module_num:86|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notes:['after that step, e.g., split, then relate individual holes („gaps") back to mother cells, relate as child objects, enable child object count ']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
    Select the larger identified objects:CytoplasmRemovedEdges
    Select the smaller identified objects:ERsignal_Method3
    Name the tertiary objects to be identified:Polygons_Method3_0pxl
    Shrink smaller object prior to subtraction?:No

OverlayObjects:[module_num:87|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
    Input:Raw
    Name the output image:Overlaid_ERsignal_method3
    Objects:ERsignal_Method3
    Opacity:0.3

OverlayObjects:[module_num:88|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
    Input:Raw
    Name the output image:Overlaid_Polygons_method3
    Objects:Polygons_Method3_0pxl
    Opacity:0.3

ConvertObjectsToImage:[module_num:89|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
    Select the input objects:ERsignal_Method3
    Name the output image:ERsignal_Method3
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:90|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
    Select the input objects:Polygons_Method3_0pxl
    Name the output image:Polygons_Method3_0pxl
    Select the color format:Color
    Select the colormap:Default

SaveImages:[module_num:91|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
    Select the type of image to save:Image
    Select the image to save:Overlaid_ERsignal_method3
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlaid_ERsignal_method3
    Saved file format:tiff
    Output file location:Same folder as image|Desktop/20230228_CP_Documentation_TestRun
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:92|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
    Select the type of image to save:Image
    Select the image to save:ERsignal_Method3
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_ERMask_method3
    Saved file format:tiff
    Output file location:Same folder as image|Desktop/20230228_CP_Documentation_TestRun
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:93|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
    Select the type of image to save:Image
    Select the image to save:Polygons_Method3_0pxl
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Polygons_method3_0pxl
    Saved file format:tiff
    Output file location:Same folder as image|Desktop/20230228_CP_Documentation_TestRun
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MeasureObjectSizeShape:[module_num:94|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notes:['altered']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
    Select object sets to measure:Cell, Cytoplasm, CytoplasmRemovedEdges, ERsignal_Method3, ERsignal_method3RemovedEdge, Nuclei, Polygons_Method3_0pxl
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:95|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
    Select images to measure:Raw
    Select objects to measure:Cell, Cytoplasm, ERsignal_Method3, Nuclei, Polygons_Method3_0pxl

Align:[module_num:96|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notes:['']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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

ExportToSpreadsheet:[module_num:97|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notes:['']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|Results
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Polygons_Method3_0pxl|AreaShape_Perimeter,Polygons_Method3_0pxl|AreaShape_Zernike_8_6,Polygons_Method3_0pxl|AreaShape_Zernike_8_2,Polygons_Method3_0pxl|AreaShape_Zernike_8_8,Polygons_Method3_0pxl|AreaShape_Zernike_8_4,Polygons_Method3_0pxl|AreaShape_Zernike_8_0,Polygons_Method3_0pxl|AreaShape_Zernike_6_6,Polygons_Method3_0pxl|AreaShape_Zernike_6_4,Polygons_Method3_0pxl|AreaShape_Zernike_6_2,Polygons_Method3_0pxl|AreaShape_Zernike_6_0,Polygons_Method3_0pxl|AreaShape_Zernike_5_5,Polygons_Method3_0pxl|AreaShape_Zernike_5_1,Polygons_Method3_0pxl|AreaShape_Zernike_5_3,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Measurements_
    Overwrite existing files without warning?:No
    Data to export:Cell
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:CytoplasmRemovedEdges
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:ERsignal_method3RemovedEdge
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Polygons_Method3_0pxl
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
