CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:153
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['']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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "mask")
    Name to assign these images:Mask
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file doesnot contain "mask")
    Name to assign these images:Raw
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['']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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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notes:['']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
    Select the input image:Mask
    Name the output image:Mask_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
ConvertImageToObjects:[module_num:6|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notes:['']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
    Select the input image:Mask
    Name the output object:Mask
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

EnhanceOrSuppressFeatures:[module_num:7|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notes:['']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
    Select the input image:Raw
    Name the output image:EnhancedNucleusHoles
    Select the operation:Enhance
    Feature size:10
    Feature type:Dark holes
    Range of hole sizes:50,250
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
MeasureObjectSizeShape:[module_num:8|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notes:['']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
    Select object sets to measure:Mask
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:9|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notes:['']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
    Select the objects to filter:Mask
    Name the output objects:Mask_ArtifactRemoved
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:12000
    Filter using a maximum measurement value?:No
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
Threshold:[module_num:10|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notes:['to find nuclei', '1 - Global thresholding']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
    Select the input image:EnhancedNucleusHoles
    Name the output image:EnhancedNucleusHoles_Mask
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:0.1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:11|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notes:['to find nuclei', '2 - Objects with reasonable size will be nominated as nuclei', '', '', "Note: Fill Holes --> different from Rolf's version (20230205 version)"]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
    Select the input image:EnhancedNucleusHoles_Mask
    Name the primary objects to be identified:toFindNuclei
    Typical diameter of objects, in pixel units (Min,Max):80,250
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After declumping only
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.01
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
MeasureObjectSizeShape:[module_num:12|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notes:['to find nuclei', '3 - Objects with reasonable shape (circularity in terms of FormFactor) will be nominated as nuclei']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
    Select object sets to measure:toFindNuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:13|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notes:['to find nuclei', '3 - Objects with reasonable shape (circularity in terms of FormFactor) will be nominated as nuclei']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
    Select the objects to filter:toFindNuclei
    Name the output objects:toFindNuclei_Filtered
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:0.3
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0

DilateObjects:[module_num:14|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notes:['to find nuclei', '4 - Filtered objects will be slightly dilated to have smoother boundaries', '', 'Resulted objects are considered as Nuclei']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
    Select the input object:toFindNuclei_Filtered
    Name the output object:Nuclei
    Structuring element:disk,3

ConvertObjectsToImage:[module_num:15|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notes:['Nuclei to be saved as images', '']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
    Select the input objects:Nuclei
    Name the output image:Nuclei
    Select the color format:Grayscale
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
SaveImages:[module_num:16|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notes:['Nuclei to be saved as images', "(saved as Gray-level image of Nuclei --> named as '..._NucleiMasks')"]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
    Select the type of image to save:Image
    Select the image to save:Nuclei
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_NucleiMasks
    Saved file format:tiff
    Output file location:Elsewhere...|C:\\Amin\\E L M I\\PostDoc\\TRR186 Collaborations\\Project A23 - Endoplasmic Reticulum (Giulia Ruffini)\\2023\\pipelines\\Results for A23_CP_X6_ERMask_RID_PolyCount
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

OverlayObjects:[module_num:17|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notes:['']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enabled:False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
    Input:Raw
    Name the output image:OverlayObjects
    Objects:Nuclei
    Opacity:0.3

Align:[module_num:18|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notes:['']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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

IdentifySecondaryObjects:[module_num:19|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notes:['to find the Cell membrane', '1 - propagation from nuclei']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
    Select the input objects:Nuclei
    Name the objects to be identified:CellBordersWithCP
    Select the method to identify the secondary objects:Propagation
    Select the input image:Raw
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:10
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:Yes
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
MaskObjects:[module_num:20|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notes:['to find the Cell membrane', '2 - Masking the result of the previous step (propagation) on the Cell masks created by CellPose', '', 'Note: Cell masks created by CellPose have been already filtered to discard tiny objects and artifacts']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
    Select objects to be masked:Mask_ArtifactRemoved
    Name the masked objects:CellAll
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CellBordersWithCP
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:No

RelateObjects:[module_num:21|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notes:['to find the Cell membrane', '3 - to discard cells with no nucleus (step A)']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
    Parent objects:Nuclei
    Child objects:CellAll
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:22|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notes:['to find the Cell membrane', '3 - to discard cells with no nucleus (step B)']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
    Select the input objects:CellAll
    Name the new objects:CellNoNuclei
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Nuclei
    Output object type:Disconnected

ConvertObjectsToImage:[module_num:23|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notes:['']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
    Select the input objects:CellNoNuclei
    Name the output image:CellNoNuclei
    Select the color format:Grayscale
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
ConvertImageToObjects:[module_num:24|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
    Select the input image:CellNoNuclei
    Name the output object:CellNoNuclei_unconnectedObjsSplitted
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

MeasureObjectSizeShape:[module_num:25|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
    Select object sets to measure:CellNoNuclei_unconnectedObjsSplitted
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:26|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notes:['to find the Cell membrane', '4 - to filter the artifacts out', '', "Note: not in the Rolf's version"]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
    Select the objects to filter:CellNoNuclei_unconnectedObjsSplitted
    Name the output objects:CellNoNuclei_SmallObjsOut
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:2000
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:27|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notes:['to find the Cell membrane', '5 - to filter the the touching-edge cells out', '', "Note: not in the Rolf's version"]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
    Select the objects to filter:CellNoNuclei_SmallObjsOut
    Name the output objects:Cell
    Select the filtering mode:Image or mask border
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    Additional object count:0
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    Keep removed objects as a seperate set?:Yes
    Name the objects removed by the filter:RemovedCells
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
ConvertObjectsToImage:[module_num:28|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notes:["Note: not in the Rolf's version"]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
    Select the input objects:CellAll
    Name the output image:CellAll
    Select the color format:Grayscale
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
SaveImages:[module_num:29|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:CellAll
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CellsIncludingTouchingBorders
    Saved file format:tiff
    Output file location:Elsewhere...|C:\\Amin\\E L M I\\PostDoc\\TRR186 Collaborations\\Project A23 - Endoplasmic Reticulum (Giulia Ruffini)\\2023\\pipelines\\Results for A23_CP_X6_ERMask_RID_PolyCount
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ConvertObjectsToImage:[module_num:30|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notes:['']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
    Select the input objects:Cell
    Name the output image:Cell
    Select the color format:Grayscale
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
SaveImages:[module_num:31|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:Cell
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CellMasks
    Saved file format:tiff
    Output file location:Elsewhere...|C:\\Amin\\E L M I\\PostDoc\\TRR186 Collaborations\\Project A23 - Endoplasmic Reticulum (Giulia Ruffini)\\2023\\pipelines\\Results for A23_CP_X6_ERMask_RID_PolyCount
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

Align:[module_num:32|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notes:['']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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

OverlayOutlines:[module_num:33|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notes:['']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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Raw
    Name the output image:overlayCellPose
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:cyan
    Select objects to display:Mask

OverlayOutlines:[module_num:34|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notes:['']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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Raw
    Name the output image:OverlayCP
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:green
    Select objects to display:Cell
    Select outline color:red
    Select objects to display:Nuclei

OverlayObjects:[module_num:35|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notes:['']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enabled:False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
    Input:Raw
    Name the output image:OverlayCellPose
    Objects:Mask
    Opacity:0.3

OverlayObjects:[module_num:36|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notes:['']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enabled:False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
    Input:Raw
    Name the output image:OverlayCP
    Objects:Cell
    Opacity:0.3

Align:[module_num:37|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notes:['']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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

IdentifyTertiaryObjects:[module_num:38|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notes:['to find Cytoplasm']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
    Select the larger identified objects:Cell
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

ConvertObjectsToImage:[module_num:39|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notes:['']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
    Select the input objects:Cytoplasm
    Name the output image:Cytoplasm
    Select the color format:Grayscale
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
SaveImages:[module_num:40|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:Cytoplasm
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CytoplasmMask
    Saved file format:tiff
    Output file location:Elsewhere...|C:\\Amin\\E L M I\\PostDoc\\TRR186 Collaborations\\Project A23 - Endoplasmic Reticulum (Giulia Ruffini)\\2023\\pipelines\\Results for A23_CP_X6_ERMask_RID_PolyCount
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MaskImage:[module_num:41|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notes:['to find the Radial Intensity Distribution (RID) within the cytoplasmic area:', "1 - mask the 'cell of interest' on the raw image."]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
    Select the input image:Raw
    Name the output image:CytoplasmMasked
    Use objects or an image as a mask?:Objects
    Select object for mask:Cytoplasm
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    Invert the mask?:No

MeasureObjectIntensity:[module_num:42|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notes:['to find the Radial Intensity Distribution (RID) within the cytoplasmic area:', '2 - measure the intensity of image within cytoplasmic area']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
    Select images to measure:Raw
    Select objects to measure:Cytoplasm

MeasureObjectSizeShape:[module_num:43|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notes:['to find the Radial Intensity Distribution (RID) within the cytoplasmic area:', '3 - measure the size and shape of cell and cytoplasm']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
    Select object sets to measure:Cell, Cytoplasm, Nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureObjectIntensityDistribution:[module_num:44|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notes:['to find the Radial Intensity Distribution (RID) within the cytoplasmic area:', '4 - Measure and draw the RID for the cytoplasmic area', '', 'Note: this step is based on the intensity of the raw image (NOT yet based on the ER coverage)']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
    Select images to measure:Raw
    Hidden:1
    Hidden:1
    Hidden:1
    Calculate intensity Zernikes?:None
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    Select objects to measure:Cell
    Object to use as center?:Edges of other objects
    Select objects to use as centers:Nuclei
    Scale the bins?:Yes
    Number of bins:11
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    Image:None
    Objects to display:Do not use
    Number of bins:3
    Measurement:Mean Fraction
    Color map:Default
    Save display as image?:Yes
    Output image name:CytoplasmRID

SaveImages:[module_num:45|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:CytoplasmRID
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CytoplasmRID
    Saved file format:tiff
    Output file location:Elsewhere...|C:\\Amin\\E L M I\\PostDoc\\TRR186 Collaborations\\Project A23 - Endoplasmic Reticulum (Giulia Ruffini)\\2023\\pipelines\\Results for A23_CP_X6_ERMask_RID_PolyCount
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

Align:[module_num:46|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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

Threshold:[module_num:47|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notes:['to Find the Perinuclear Area', '1 - global thresholding']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
    Select the input image:CytoplasmMasked
    Name the output image:toFindPerinuclearArea
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:10
    Threshold correction factor:2.2
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:Yes
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
IdentifyPrimaryObjects:[module_num:48|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notes:['to Find the Perinuclear Area', '2 - thresholded image as an object', '3 - the resulted object is considered as the Perinuclear area']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
    Select the input image:toFindPerinuclearArea
    Name the primary objects to be identified:Perinuclear
    Typical diameter of objects, in pixel units (Min,Max):100,500
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.9
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
IdentifyTertiaryObjects:[module_num:49|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notes:['to Find the Peripheral Area', '1 - Cytoplasm minus perinuclear = peripheral area']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
    Select the larger identified objects:Cytoplasm
    Select the smaller identified objects:Perinuclear
    Name the tertiary objects to be identified:toFindPeripheralArea
    Shrink smaller object prior to subtraction?:No

RelateObjects:[module_num:50|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notes:['to Find the Peripheral Area', '2 - relate peripheral areas to cells (A)']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
    Parent objects:Cell
    Child objects:toFindPeripheralArea
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:51|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notes:['to Find the Peripheral Area', '2 - relate peripheral areas to cells (B)']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
    Select the input objects:toFindPeripheralArea
    Name the new objects:Peripheral
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cell
    Output object type:Disconnected

ConvertObjectsToImage:[module_num:52|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notes:['save Peripheral area as binary mask']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
    Select the input objects:Peripheral
    Name the output image:Peripheral
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:53|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notes:['save Peripheral area as binary mask']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
    Select the type of image to save:Image
    Select the image to save:Peripheral
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_PeripheralMask
    Saved file format:tiff
    Output file location:Elsewhere...|C:\\Amin\\E L M I\\PostDoc\\TRR186 Collaborations\\Project A23 - Endoplasmic Reticulum (Giulia Ruffini)\\2023\\pipelines\\Results for A23_CP_X6_ERMask_RID_PolyCount
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ConvertObjectsToImage:[module_num:54|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notes:['save Perinuclear area as binary mask']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
    Select the input objects:Perinuclear
    Name the output image:Perinuclear
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:55|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notes:['save Perinuclear area as binary mask']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
    Select the type of image to save:Image
    Select the image to save:Perinuclear
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_PerinuclearMask
    Saved file format:tiff
    Output file location:Elsewhere...|C:\\Amin\\E L M I\\PostDoc\\TRR186 Collaborations\\Project A23 - Endoplasmic Reticulum (Giulia Ruffini)\\2023\\pipelines\\Results for A23_CP_X6_ERMask_RID_PolyCount
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

OverlayOutlines:[module_num:56|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notes:['']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Raw
    Name the output image:Overlaid_PerinuclearBorders
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:Perinuclear

OverlayObjects:[module_num:57|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notes:['']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
    Input:Raw
    Name the output image:Overlaid_PerinuclearArea
    Objects:Perinuclear
    Opacity:0.3

OverlayObjects:[module_num:58|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notes:['']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
    Input:Raw
    Name the output image:Overlaid_PeripheralArea
    Objects:Peripheral
    Opacity:0.3

OverlayOutlines:[module_num:59|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notes:['']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Raw
    Name the output image:Overlaid_PerinuclearAndPeripheralBorders
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:Cytoplasm
    Select outline color:Green
    Select objects to display:Perinuclear

MaskImage:[module_num:60|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notes:['Peripheral area masked on the raw image']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
    Select the input image:Raw
    Name the output image:PeripheralMasked
    Use objects or an image as a mask?:Objects
    Select object for mask:Peripheral
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    Invert the mask?:No

SaveImages:[module_num:61|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:Overlaid_PerinuclearAndPeripheralBorders
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlaid_PerinuclearAndPeripheralBorders
    Saved file format:tiff
    Output file location:Elsewhere...|C:\\Amin\\E L M I\\PostDoc\\TRR186 Collaborations\\Project A23 - Endoplasmic Reticulum (Giulia Ruffini)\\2023\\pipelines\\Results for A23_CP_X6_ERMask_RID_PolyCount
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:62|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:Overlaid_PerinuclearArea
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlaid_PerinuclearArea
    Saved file format:tiff
    Output file location:Elsewhere...|C:\\Amin\\E L M I\\PostDoc\\TRR186 Collaborations\\Project A23 - Endoplasmic Reticulum (Giulia Ruffini)\\2023\\pipelines\\Results for A23_CP_X6_ERMask_RID_PolyCount
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:63|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:Overlaid_PeripheralArea
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlaid_PeripheralArea
    Saved file format:tiff
    Output file location:Elsewhere...|C:\\Amin\\E L M I\\PostDoc\\TRR186 Collaborations\\Project A23 - Endoplasmic Reticulum (Giulia Ruffini)\\2023\\pipelines\\Results for A23_CP_X6_ERMask_RID_PolyCount
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

Align:[module_num:64|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notes:['']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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

EnhanceOrSuppressFeatures:[module_num:65|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notes:["to find 'ER Signal' (also called as 'ER Mask') using Method #1 (Inverted Dark Holes within Cytoplasmic area)", '', '1 - Enhance dark holes in the Cytoplasmic area']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
    Select the input image:CytoplasmMasked
    Name the output image:CytoplasmEnhancedHoles
    Select the operation:Enhance
    Feature size:20
    Feature type:Dark holes
    Range of hole sizes:1,30
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
ConvertImageToObjects:[module_num:66|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notes:["to find 'ER Signal' (also called as 'ER Mask') using Method #1 (Inverted Dark Holes within Cytoplasmic area)", '', '2 - Convert the enhanced dark holes (within the Cytoplasmic area) to objects']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
    Select the input image:CytoplasmEnhancedHoles
    Name the output object:CytoplasmEnhancedHoles
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

MaskObjects:[module_num:67|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notes:['ALL the Enhanced dark holes in the Cytoplasmic area']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
    Select objects to be masked:CytoplasmEnhancedHoles
    Name the masked objects:CytoplasmEnhancedHoles_CytoArea
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Cytoplasm
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:68|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notes:['the Enhanced dark holes in the Peripheral Area only']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
    Select objects to be masked:CytoplasmEnhancedHoles
    Name the masked objects:CytoplasmEnhancedHoles_PeripheralArea
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Peripheral
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

IdentifyTertiaryObjects:[module_num:69|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notes:["to find 'ER Signal' (also called as 'ER Mask') using Method #1 (Inverted Dark Holes within Cytoplasmic area)", '', "3 - 'Cytoplasmic area' minus 'dark holes' ===> ER Signal (mask) Method #1"]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
    Select the larger identified objects:Cytoplasm
    Select the smaller identified objects:CytoplasmEnhancedHoles_CytoArea
    Name the tertiary objects to be identified:ERsignal_method1invertedHoles
    Shrink smaller object prior to subtraction?:No

ExpandOrShrinkObjects:[module_num:70|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notes:['to find the Cell Perimeter (membrane)']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
    Select the input objects:Cell
    Name the output objects:ShrunkenCells
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:2
    Fill holes in objects so that all objects shrink to a single point?:No

IdentifyTertiaryObjects:[module_num:71|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notes:['to find the Cell Perimeter (membrane)']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
    Select the larger identified objects:Cell
    Select the smaller identified objects:ShrunkenCells
    Name the tertiary objects to be identified:Cell_perimeter
    Shrink smaller object prior to subtraction?:Yes

MaskObjects:[module_num:72|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notes:['discarding marginal polygons (i.e. dark holes touching the cell membrane)', '', 'Note: this is for the entire Cyto area']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
    Select objects to be masked:CytoplasmEnhancedHoles_CytoArea
    Name the masked objects:CytoplasmEnhancedHoles_CytoArea_NoMarginalPolygons
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Cell_perimeter
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:1
    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:73|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notes:['discarding marginal polygons (i.e. dark holes touching the cell membrane)', '', 'Note: this is for only the peripheral area']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
    Select objects to be masked:CytoplasmEnhancedHoles_PeripheralArea
    Name the masked objects:CytoplasmEnhancedHoles_PeripheralArea_NoMarginalPolygons
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Cell_perimeter
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:1
    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MeasureObjectSizeShape:[module_num:74|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notes:['to remove very small polygons (i.e. dark holes)']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
    Select object sets to measure:CytoplasmEnhancedHoles_CytoArea, CytoplasmEnhancedHoles_CytoArea_NoMarginalPolygons, CytoplasmEnhancedHoles_PeripheralArea, CytoplasmEnhancedHoles_PeripheralArea_NoMarginalPolygons
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectSizeShape:[module_num:75|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notes:['']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
    Select object sets to measure:Cell_perimeter, ShrunkenCells
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:76|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notes:['to remove very small polygons (i.e. dark holes)', '', 'Note: this step is for polygons within cyto area']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
    Select the objects to filter:CytoplasmEnhancedHoles_CytoArea_NoMarginalPolygons
    Name the output objects:CytoplasmEnhancedHoles_CytoArea_NoMarginalPolygons_filteredSmallObjs
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:Yes
    Name the objects removed by the filter:CytoplasmEnhancedHoles_CytoArea_NoMarginalPolygons_SmallObjsOnly
    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:5
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:77|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notes:['to remove very small polygons (i.e. dark holes)', '', 'Note: this step is for polygons within Peripheral area']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
    Select the objects to filter:CytoplasmEnhancedHoles_PeripheralArea_NoMarginalPolygons
    Name the output objects:CytoplasmEnhancedHoles_PeripheralArea_NoMarginalPolygons_filteredSmallObjs
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:Yes
    Name the objects removed by the filter:CytoplasmEnhancedHoles_PeripheralArea_NoMarginalPolygons_SmallObjsOnly
    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:5
    Filter using a maximum measurement value?:No
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
RelateObjects:[module_num:78|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notes:['to find polygons (already filetered by size) per cell  (Method #1 = direct detection of dark holes)', '', 'Note: this step is for polygons within cyto area']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
    Parent objects:Cell
    Child objects:CytoplasmEnhancedHoles_CytoArea_NoMarginalPolygons_filteredSmallObjs
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:79|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notes:['to find polygons (already filetered by size) per cell  (Method #1 = direct detection of dark holes)', '', 'Note: this step is for polygons within cyto area']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
    Select the input objects:CytoplasmEnhancedHoles_CytoArea_NoMarginalPolygons_filteredSmallObjs
    Name the new objects:PolygonsCyto_Method1Holes
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cell
    Output object type:Disconnected

RelateObjects:[module_num:80|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notes:['to find polygons (already filetered by size) per cell  (Method #1 = direct detection of dark holes)', '', 'Note: this step is for polygons within peripheral area only']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
    Parent objects:Cell
    Child objects:CytoplasmEnhancedHoles_PeripheralArea_NoMarginalPolygons_filteredSmallObjs
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:81|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notes:['to find polygons (already filetered by size) per cell  (Method #1 = direct detection of dark holes)', '', 'Note: this step is for polygons within peripheral area only']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
    Select the input objects:CytoplasmEnhancedHoles_PeripheralArea_NoMarginalPolygons_filteredSmallObjs
    Name the new objects:PolygonsPeripheral_Method1Holes
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cell
    Output object type:Disconnected

RelateObjects:[module_num:82|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notes:['discarded small polygons']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
    Parent objects:Cell
    Child objects:CytoplasmEnhancedHoles_CytoArea_NoMarginalPolygons_SmallObjsOnly
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:83|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notes:['discarded small polygons']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
    Select the input objects:CytoplasmEnhancedHoles_CytoArea_NoMarginalPolygons_SmallObjsOnly
    Name the new objects:PolygonsCyto_Method1Holes_discarded
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cell
    Output object type:Disconnected

RelateObjects:[module_num:84|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notes:['discarded small polygons']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
    Parent objects:Cell
    Child objects:CytoplasmEnhancedHoles_PeripheralArea_NoMarginalPolygons_SmallObjsOnly
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:85|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notes:['discarded small polygons']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
    Select the input objects:CytoplasmEnhancedHoles_PeripheralArea_NoMarginalPolygons_filteredSmallObjs
    Name the new objects:PolygonsPeripheral_Method1Holes_discarded
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cell
    Output object type:Disconnected

OverlayObjects:[module_num:86|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notes:['Visualizing --> Polygons in Cytoplasmic area (using Method #1 --> direct detection of dark holes)']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
    Input:Raw
    Name the output image:Overlaid_PolygonsCyto_Method1Holes
    Objects:PolygonsCyto_Method1Holes
    Opacity:0.5

SaveImages:[module_num:87|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notes:['Saving --> Polygons in Cytoplasmic area (using Method #1 --> direct detection of dark holes)']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
    Select the type of image to save:Image
    Select the image to save:Overlaid_PolygonsCyto_Method1Holes
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlaid_PolygonsCyto_Method1Holes
    Saved file format:tiff
    Output file location:Elsewhere...|C:\\Amin\\E L M I\\PostDoc\\TRR186 Collaborations\\Project A23 - Endoplasmic Reticulum (Giulia Ruffini)\\2023\\pipelines\\Results for A23_CP_X6_ERMask_RID_PolyCount
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

OverlayObjects:[module_num:88|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notes:['Visualizing --> Polygons in Cytoplasmic area (using Method #1 --> direct detection of dark holes)']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
    Input:Raw
    Name the output image:Overlaid_PolygonsCyto_Method1Holes_splitedPolygons
    Objects:CytoplasmEnhancedHoles_CytoArea_NoMarginalPolygons_filteredSmallObjs
    Opacity:0.5

SaveImages:[module_num:89|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notes:['Saving --> Polygons in Cytoplasmic area (using Method #1 --> direct detection of dark holes)']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
    Select the type of image to save:Image
    Select the image to save:Overlaid_PolygonsCyto_Method1Holes_splitedPolygons
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlaid_PolygonsCyto_Method1Holes_splitedPolygons
    Saved file format:tiff
    Output file location:Elsewhere...|C:\\Amin\\E L M I\\PostDoc\\TRR186 Collaborations\\Project A23 - Endoplasmic Reticulum (Giulia Ruffini)\\2023\\pipelines\\Results for A23_CP_X6_ERMask_RID_PolyCount
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

OverlayObjects:[module_num:90|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notes:['Visualizing --> Polygons in Peripheral area (using Method #1 --> direct detection of dark holes)']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
    Input:Raw
    Name the output image:Overlaid_PolygonsPeripheral_Method1Holes
    Objects:PolygonsPeripheral_Method1Holes
    Opacity:0.5

SaveImages:[module_num:91|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notes:['Saving --> Polygons in Peripheral area (using Method #1 --> direct detection of dark holes)']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
    Select the type of image to save:Image
    Select the image to save:Overlaid_PolygonsPeripheral_Method1Holes
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlaid_PolygonsPeripheral_Method1Holes
    Saved file format:tiff
    Output file location:Elsewhere...|C:\\Amin\\E L M I\\PostDoc\\TRR186 Collaborations\\Project A23 - Endoplasmic Reticulum (Giulia Ruffini)\\2023\\pipelines\\Results for A23_CP_X6_ERMask_RID_PolyCount
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

OverlayObjects:[module_num:92|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notes:['Visualizing --> Polygons in Peripheral area (using Method #1 --> direct detection of dark holes)']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
    Input:Raw
    Name the output image:Overlaid_PolygonsPeripheral_Method1Holes_splitedPolygons
    Objects:CytoplasmEnhancedHoles_PeripheralArea_NoMarginalPolygons_filteredSmallObjs
    Opacity:0.5

SaveImages:[module_num:93|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notes:['Saving --> Polygons in Peripheral area (using Method #1 --> direct detection of dark holes)']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
    Select the type of image to save:Image
    Select the image to save:Overlaid_PolygonsPeripheral_Method1Holes_splitedPolygons
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlaid_PolygonsPeripheral_Method1Holes_splitedPolygons
    Saved file format:tiff
    Output file location:Elsewhere...|C:\\Amin\\E L M I\\PostDoc\\TRR186 Collaborations\\Project A23 - Endoplasmic Reticulum (Giulia Ruffini)\\2023\\pipelines\\Results for A23_CP_X6_ERMask_RID_PolyCount
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

Tile:[module_num:94|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notes:['Visualizing --> Polygons in Cytoplasmic area (using Method #1 --> direct detection of dark holes)']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
    Select an input image:Raw
    Name the output image:TiledImage_RawAndPolygonsMethod1Holes
    Tile assembly method:Within cycles
    Final number of rows:8
    Final number of columns:12
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:Yes
    Automatically calculate number of columns?:Yes
    Select an additional image to tile:Overlaid_PolygonsCyto_Method1Holes

SaveImages:[module_num:95|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notes:['Saving --> Polygons in Cytoplasmic area (using Method #1 --> direct detection of dark holes)']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
    Select the type of image to save:Image
    Select the image to save:TiledImage_RawAndPolygonsMethod1Holes
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_TiledImage_RawAndPolygonsMethod1Holes
    Saved file format:tiff
    Output file location:Elsewhere...|C:\\Amin\\E L M I\\PostDoc\\TRR186 Collaborations\\Project A23 - Endoplasmic Reticulum (Giulia Ruffini)\\2023\\pipelines\\Results for A23_CP_X6_ERMask_RID_PolyCount
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

OverlayObjects:[module_num:96|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notes:["Visualizing --> 'ER Signal' (also called as 'ER Mask') using Method #1 (Inverted Dark Holes within Cytoplasmic area)"]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
    Input:Raw
    Name the output image:Overlaid_ERsignal_method1invertedHoles
    Objects:ERsignal_method1invertedHoles
    Opacity:0.7

SaveImages:[module_num:97|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notes:["Saving --> 'ER Signal' (also called as 'ER Mask') using Method #1 (Inverted Dark Holes within Cytoplasmic area)"]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
    Select the type of image to save:Image
    Select the image to save:Overlaid_ERsignal_method1invertedHoles
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlaid_ERsignal_Method1invertedHoles
    Saved file format:tiff
    Output file location:Elsewhere...|C:\\Amin\\E L M I\\PostDoc\\TRR186 Collaborations\\Project A23 - Endoplasmic Reticulum (Giulia Ruffini)\\2023\\pipelines\\Results for A23_CP_X6_ERMask_RID_PolyCount
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

Align:[module_num:98|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notes:['']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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

EnhanceOrSuppressFeatures:[module_num:99|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notes:["to find 'ER Signal' (also called as 'ER Mask') using Method #2plus (direct detection of ER Tubules + entire Perinuclear area)", '', '1 - Enhance Tubular-like Neurites within Peripheral area']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
    Select the input image:PeripheralMasked
    Name the output image:toFindER_PeripheralEnhancedTubules
    Select the operation:Enhance
    Feature size:5
    Feature type:Neurites
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    Smoothing scale:1
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    Enhancement method:Tubeness
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    Rescale result image:Yes

Threshold:[module_num:100|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notes:["to find 'ER Signal' (also called as 'ER Mask') using Method #2plus (direct detection of ER Tubules + entire Perinuclear area)", '', '2 - Thresholding the enhanced neurites']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
    Select the input image:toFindER_PeripheralEnhancedTubules
    Name the output image:toFindER_PeripheralThresholdedTubules_withEdges
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.02
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
ExpandOrShrinkObjects:[module_num:101|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notes:["to find 'ER Signal' (also called as 'ER Mask') using Method #2plus (direct detection of ER Tubules + entire Perinuclear area)", '', '3A - Shrinking the cytoplasm (to avoid considering cell membrane structures as ER tubules)']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
    Select the input objects:Cytoplasm
    Name the output objects:shrinked_Cytoplasm
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:2
    Fill holes in objects so that all objects shrink to a single point?:No

MaskImage:[module_num:102|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notes:["to find 'ER Signal' (also called as 'ER Mask') using Method #2plus (direct detection of ER Tubules + entire Perinuclear area)", '', '3B - Masking the Thresholded Tubular-like structure on the Shrinked cytoplasm (to avoid considering cell membrane structures as ER tubules)']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
    Select the input image:toFindER_PeripheralThresholdedTubules_withEdges
    Name the output image:toFindER_PeripheralThresholdedTubules_edgesRemoved
    Use objects or an image as a mask?:Objects
    Select object for mask:shrinked_Cytoplasm
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    Invert the mask?:No

ConvertImageToObjects:[module_num:103|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notes:["to find 'ER Signal' (also called as 'ER Mask') using Method #2plus (direct detection of ER Tubules + entire Perinuclear area)", '', '3C - Image to Object']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
    Select the input image:toFindER_PeripheralThresholdedTubules_edgesRemoved
    Name the output object:toFindER_PeripheralThresholdedTubules_edgesRemoved
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

RelateObjects:[module_num:104|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notes:["to find 'ER Signal' (also called as 'ER Mask') using Method #2plus (direct detection of ER Tubules + entire Perinuclear area)", '', "3D - ER Tubules 'per cell'"]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
    Parent objects:Cell
    Child objects:toFindER_PeripheralThresholdedTubules_edgesRemoved
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:105|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notes:["to find 'ER Signal' (also called as 'ER Mask') using Method #2plus (direct detection of ER Tubules + entire Perinuclear area)", '', "3D - ER Tubules 'per cell'"]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
    Select the input objects:toFindER_PeripheralThresholdedTubules_edgesRemoved
    Name the new objects:ER_tubules
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cell
    Output object type:Disconnected

ConvertObjectsToImage:[module_num:106|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notes:["to find 'ER Signal' (also called as 'ER Mask') using Method #2plus (direct detection of ER Tubules + entire Perinuclear area)", '', "3E - Objects2Image --> ER Tubules 'per cell'"]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
    Select the input objects:ER_tubules
    Name the output image:ER_tubules
    Select the color format:Color
    Select the colormap:Default

OverlayObjects:[module_num:107|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notes:["Visualization --> 'ER Tubules' ---- to find 'ER Signal' (also called as 'ER Mask') using Method #2plus (direct detection of ER Tubules + entire Perinuclear area)"]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
    Input:Raw
    Name the output image:Overlaid_ER_tubules
    Objects:ER_tubules
    Opacity:0.4

SaveImages:[module_num:108|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notes:["Saving --> 'ER Tubules' ---- to find 'ER Signal' (also called as 'ER Mask') using Method #2plus (direct detection of ER Tubules + entire Perinuclear area)"]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
    Select the type of image to save:Image
    Select the image to save:Overlaid_ER_tubules
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlaid_ER_Tubules
    Saved file format:tiff
    Output file location:Elsewhere...|C:\\Amin\\E L M I\\PostDoc\\TRR186 Collaborations\\Project A23 - Endoplasmic Reticulum (Giulia Ruffini)\\2023\\pipelines\\Results for A23_CP_X6_ERMask_RID_PolyCount
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

Align:[module_num:109|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notes:['']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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

CombineObjects:[module_num:110|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notes:["to find 'ER Signal' (also called as 'ER Mask') using Method #2plus (direct detection of ER Tubules + entire Perinuclear area)", '', '4 - ER Tubules + Perinuclear']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
    Select initial object set:Perinuclear
    Select object set to combine:ER_tubules
    Select how to handle overlapping objects:Merge
    Name the combined object set:toFindERsignal_method2Plus_PerinuclearAndTubules

RelateObjects:[module_num:111|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notes:["to find 'ER Signal' (also called as 'ER Mask') using Method #2plus (direct detection of ER Tubules + entire Perinuclear area)", '', '4B - ER Tubules + Perinuclear (per Cell)']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
    Parent objects:Cell
    Child objects:toFindERsignal_method2Plus_PerinuclearAndTubules
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:112|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notes:["to find 'ER Signal' (also called as 'ER Mask') using Method #2plus (direct detection of ER Tubules + entire Perinuclear area)", '', '4B - ER Tubules + Perinuclear (per Cell)']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
    Select the input objects:toFindERsignal_method2Plus_PerinuclearAndTubules
    Name the new objects:ERsignal_method2Plus_PerinuclearAndTubules
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cell
    Output object type:Disconnected

OverlayObjects:[module_num:113|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notes:["Visualitaion --> Overlaind 'ER Signal' (also called as 'ER Mask') using Method #2plus (direct detection of ER Tubules + entire Perinuclear area)"]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
    Input:Raw
    Name the output image:Overlaid_ERsignal_method2Plus_PerinuclearAndTubules
    Objects:ERsignal_method2Plus_PerinuclearAndTubules
    Opacity:0.7

SaveImages:[module_num:114|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notes:["Saving --> Overlaind 'ER Signal' (also called as 'ER Mask') using Method #2plus (direct detection of ER Tubules + entire Perinuclear area)"]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
    Select the type of image to save:Image
    Select the image to save:Overlaid_ERsignal_method2Plus_PerinuclearAndTubules
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlaid_ERsignal_method2Plus_PerinuclearAndTubules
    Saved file format:tiff
    Output file location:Elsewhere...|C:\\Amin\\E L M I\\PostDoc\\TRR186 Collaborations\\Project A23 - Endoplasmic Reticulum (Giulia Ruffini)\\2023\\pipelines\\Results for A23_CP_X6_ERMask_RID_PolyCount
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

Align:[module_num:115|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notes:['']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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

CombineObjects:[module_num:116|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notes:["'ER Signal' (also called as 'ER Mask') using Method #3 -->  Method#2plus + Method#1", '', '1 - Combining ER Masks from Methods #1 and #2plus', '', 'Note 1: Method #1 --> inverted Holes in Cyto', 'Note 2: Method #2plus --> direct detection of ER Tubules + entire Perinuclear area']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
    Select initial object set:ERsignal_method1invertedHoles
    Select object set to combine:ERsignal_method2Plus_PerinuclearAndTubules
    Select how to handle overlapping objects:Merge
    Name the combined object set:CombinedObjects

RelateObjects:[module_num:117|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notes:["'ER Signal' (also called as 'ER Mask') using Method #3 -->  Method#2plus + Method#1", '', '2 - ... per Cell ...', '', 'Note 1: Method #1 --> inverted Holes in Cyto', 'Note 2: Method #2plus --> direct detection of ER Tubules + entire Perinuclear area']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
    Parent objects:Cell
    Child objects:CombinedObjects
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:118|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notes:["'ER Signal' (also called as 'ER Mask') using Method #3 -->  Method#2plus + Method#1", '', '2 - ... per Cell ...', '', 'Note 1: Method #1 --> inverted Holes in Cyto', 'Note 2: Method #2plus --> direct detection of ER Tubules + entire Perinuclear area']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
    Select the input objects:CombinedObjects
    Name the new objects:ERsignal_Method3
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cell
    Output object type:Disconnected

ConvertObjectsToImage:[module_num:119|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notes:["'ER Signal' (also called as 'ER Mask') using Method #3 -->  Method#2plus + Method#1", '', '3- Convert to Mask']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
    Select the input objects:ERsignal_Method3
    Name the output image:ERsignal_Method3
    Select the color format:Binary (black & white)
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
OverlayObjects:[module_num:120|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notes:["Visualizing --> Overlaid 'ER Signal' (also called as 'ER Mask') using Method #3 -->  Method#2plus + Method#1"]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
    Input:Raw
    Name the output image:Overlaid_ERsignal_method3
    Objects:ERsignal_Method3
    Opacity:0.3

SaveImages:[module_num:121|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notes:["Saving --> Overlaid 'ER Signal' (also called as 'ER Mask') using Method #3 -->  Method#2plus + Method#1"]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
    Select the type of image to save:Image
    Select the image to save:Overlaid_ERsignal_method3
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlaid_ERsignal_method3
    Saved file format:tiff
    Output file location:Elsewhere...|C:\\Amin\\E L M I\\PostDoc\\TRR186 Collaborations\\Project A23 - Endoplasmic Reticulum (Giulia Ruffini)\\2023\\pipelines\\Results for A23_CP_X6_ERMask_RID_PolyCount
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:122|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notes:["Saving --> Mask of 'ER Signal' (also called as 'ER Mask') using Method #3 -->  Method#2plus + Method#1"]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
    Select the type of image to save:Image
    Select the image to save:ERsignal_Method3
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_ERMask_method3
    Saved file format:tiff
    Output file location:Elsewhere...|C:\\Amin\\E L M I\\PostDoc\\TRR186 Collaborations\\Project A23 - Endoplasmic Reticulum (Giulia Ruffini)\\2023\\pipelines\\Results for A23_CP_X6_ERMask_RID_PolyCount
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

Align:[module_num:123|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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

ExpandOrShrinkObjects:[module_num:124|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notes:["to find Polygons (inverting 'ER Signal' Method #3) ", '', '1 - Shrinking the Cell (to discard gaps adjacent to the membrane)', '', 'Note: -->  ER Signal Method #3 = Method#2plus + Method#1']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
    Select the input objects:Cell
    Name the output objects:ShrunkenCells_toFindGaps
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:10
    Fill holes in objects so that all objects shrink to a single point?:No

MaskObjects:[module_num:125|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notes:["to find Polygons (inverting 'ER Signal' Method #3) ", '', '2 - Masking the Shrunken Cell on the Cytoplasmic area', '', 'Note: -->  ER Signal Method #3 = Method#2plus + Method#1']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
    Select objects to be masked:Cytoplasm
    Name the masked objects:CytoplasmRemovedEdges
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ShrunkenCells_toFindGaps
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:126|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notes:["to find Polygons (inverting 'ER Signal' Method #3) ", '', '3 - Masking the Shrunken Cell on ER Signal Method#3', '', 'Note: -->  ER Signal Method #3 = Method#2plus + Method#1']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
    Select objects to be masked:ERsignal_Method3
    Name the masked objects:ERsignal_method3RemovedEdge
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ShrunkenCells_toFindGaps
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

IdentifyTertiaryObjects:[module_num:127|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notes:["to find Polygons (inverting 'ER Signal' Method #3) ", '', '4 - inverting ER Signal Method#3', '', 'Note: -->  ER Signal Method #3 = Method#2plus + Method#1']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
    Select the larger identified objects:CytoplasmRemovedEdges
    Select the smaller identified objects:ERsignal_Method3
    Name the tertiary objects to be identified:Polygons_Method3_0pxl
    Shrink smaller object prior to subtraction?:No

OverlayObjects:[module_num:128|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notes:["Visualizazion ==> Overlaid Polygons (inverting 'ER Signal' Method #3) "]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
    Input:Raw
    Name the output image:Overlaid_Polygons_method3
    Objects:Polygons_Method3_0pxl
    Opacity:0.3

ConvertObjectsToImage:[module_num:129|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notes:["Creating 'Polygon Masks' (inverting 'ER Signal' Method #3) "]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
    Select the input objects:Polygons_Method3_0pxl
    Name the output image:Polygons_Method3_0pxl
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:130|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notes:["Saving ==> 'Polygon Masks' (inverting 'ER Signal' Method #3) "]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
    Select the type of image to save:Image
    Select the image to save:Polygons_Method3_0pxl
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Polygons_method3_0pxl
    Saved file format:tiff
    Output file location:Elsewhere...|C:\\Amin\\E L M I\\PostDoc\\TRR186 Collaborations\\Project A23 - Endoplasmic Reticulum (Giulia Ruffini)\\2023\\pipelines\\Results for A23_CP_X6_ERMask_RID_PolyCount
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MeasureObjectSizeShape:[module_num:131|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
    Select object sets to measure:Cell, Cytoplasm, CytoplasmRemovedEdges, ERsignal_Method3, ERsignal_method1invertedHoles, ERsignal_method2Plus_PerinuclearAndTubules, ERsignal_method3RemovedEdge, Nuclei, Perinuclear, Peripheral, Polygons_Method3_0pxl
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:132|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
    Select images to measure:ERsignal_Method3, Raw
    Select objects to measure:Cell, Cytoplasm, ERsignal_Method3, ERsignal_method1invertedHoles, ERsignal_method2Plus_PerinuclearAndTubules, ERsignal_method3RemovedEdge, Nuclei, Perinuclear, Peripheral, Polygons_Method3_0pxl

MeasureObjectIntensityDistribution:[module_num:133|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
    Select images to measure:ERsignal_Method3
    Hidden:1
    Hidden:1
    Hidden:1
    Calculate intensity Zernikes?:None
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    Select objects to measure:Cell
    Object to use as center?:Edges of other objects
    Select objects to use as centers:Nuclei
    Scale the bins?:Yes
    Number of bins:11
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    Image:None
    Objects to display:Do not use
    Number of bins:3
    Measurement:Fraction at Distance
    Color map:Default
    Save display as image?:Yes
    Output image name:RID_ERcoverage

SaveImages:[module_num:134|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
    Select the type of image to save:Image
    Select the image to save:RID_ERsignal
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CytoplasmRID_ERsignal
    Saved file format:tiff
    Output file location:Elsewhere...|C:\\Amin\\E L M I\\PostDoc\\TRR186 Collaborations\\Project A23 - Endoplasmic Reticulum (Giulia Ruffini)\\2023\\pipelines\\Results for A23_CP_X6_ERMask_RID_PolyCount
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

Align:[module_num:135|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notes:['Radial Coverage of ER Signal (per bin)']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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

ConvertImageToObjects:[module_num:136|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notes:['']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enabled:False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
    Select the input image:RID_ERsignal
    Name the output object:RID_ERsignalx
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:137|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enabled:False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
    Select the input image:ERMask
    Name the output object:ERMask
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:1

MaskObjects:[module_num:138|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enabled:False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
    Select objects to be masked:RID_ERsignal
    Name the masked objects:MaskedRID
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ERsignal_Method3
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:No

ConvertObjectsToImage:[module_num:139|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enabled:False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
    Select the input objects:MaskedRID
    Name the output image:MaskedRID
    Select the color format:Color
    Select the colormap:Default

MeasureObjectSizeShape:[module_num:140|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notes:['']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enabled:False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
    Select object sets to measure:MaskedRID, RID_ERsignal
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:141|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|C:\Amin\E L M I\PostDoc\TRR186 Collaborations\Project A23 - Endoplasmic Reticulum (Giulia Ruffini)\2023\pipelines\x
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:MaskedRID|AreaShape_Area,CytoplasmRID|AreaShape_Area
    Representation of Nan/Inf:Null
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:MaskedRID
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:RID_ERsignal
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes

Align:[module_num:142|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notes:['']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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

ConvertImageToObjects:[module_num:143|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enabled:False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
    Select the input image:Cell
    Name the output object:Cell
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

RemoveHoles:[module_num:144|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enabled:False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
    Select the input image:Polygons_Method3_0pxl
    Name the output image:Polygon_RemoveHoles
    Size of holes to fill:3

ConvertImageToObjects:[module_num:145|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enabled:False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
    Select the input image:Polygon_RemoveHoles
    Name the output object:Polygon
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

MeasureObjectSizeShape:[module_num:146|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enabled:False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
    Select object sets to measure:Polygon
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:147|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enabled:False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
    Select the objects to filter:Polygon
    Name the output objects:Polygon_Filtered
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:200
    Filter using a maximum measurement value?:Yes
    Maximum value:230

RelateObjects:[module_num:148|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enabled:False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
    Parent objects:Cell
    Child objects:Polygon
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:149|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enabled:False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
    Select the input objects:Polygon
    Name the new objects:Polygon_perCell
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cell
    Output object type:Disconnected

MeasureObjectSizeShape:[module_num:150|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enabled:False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
    Select object sets to measure:Polygon, Polygon_perCell
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

DisplayDataOnImage:[module_num:151|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enabled:False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
    Display object or image measurements?:Object
    Select the input objects:Polygon_perCell
    Measurement to display:AreaShape_EulerNumber
    Select the image on which to display the measurements:Polygon
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage_NumberOfGapsPerCell
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
DisplayDataOnImage:[module_num:152|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enabled:False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
    Display object or image measurements?:Object
    Select the input objects:Polygon_perCell
    Measurement to display:AreaShape_Area
    Select the image on which to display the measurements:Polygon
    Text color:#00FF40
    Name the output image that has the measurements displayed:DisplayImage_AreaOfGapsPerCell
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
ExportToSpreadsheet:[module_num:153|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|C:\Amin\E L M I\PostDoc\TRR186 Collaborations\Project A23 - Endoplasmic Reticulum (Giulia Ruffini)\2023\pipelines\x
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Polygon_perCell|AreaShape_Compactness,Polygon_perCell|AreaShape_MeanRadius,Polygon_perCell|AreaShape_Solidity,Polygon_perCell|AreaShape_EulerNumber,Polygon_perCell|AreaShape_Area,Polygon_perCell|AreaShape_MedianRadius,Polygon_perCell|AreaShape_FormFactor
    Representation of Nan/Inf:Null
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Polygon_perCell
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
