CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:152
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "mask")
    Name to assign these images:CellPoseMask
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file doesnot contain "mask") (or (file does contain "GFP") (file does contain "488"))
    Name to assign these images:RawGFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Align:[module_num:5|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notes:['next MODULE group:', '', 'detect nuclei (preliminary)']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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

EnhanceOrSuppressFeatures:[module_num:6|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
    Select the input image:RawGFP
    Name the output image:Nuclei_preliminary_precursor01
    Select the operation:Enhance
    Feature size:10
    Feature type:Dark holes
    Range of hole sizes:70,250
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
Threshold:[module_num:7|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
    Select the input image:Nuclei_preliminary_precursor01
    Name the output image:Nuclei_preliminary_precursor02
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:0.1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:Nuclei_preliminary_precursor02
    Name the primary objects to be identified:Nuclei_preliminary_precursor03
    Typical diameter of objects, in pixel units (Min,Max):80,250
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.01
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
MeasureObjectSizeShape:[module_num:9|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
    Select object sets to measure:Nuclei_preliminary_precursor03
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:10|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notes:['Adjusted form factor value to 0.4']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
    Select the objects to filter:Nuclei_preliminary_precursor03
    Name the output objects:Nuclei_preliminary_precursor04
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:0.4
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0
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
DilateObjects:[module_num:11|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
    Select the input object:Nuclei_preliminary_precursor04
    Name the output object:Nuclei_preliminary
    Structuring element:disk,3

Align:[module_num:12|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notes:['next MODULE group:', '', 'detect cells (preliminary)']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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

IdentifySecondaryObjects:[module_num:13|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notes:['']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
    Select the input objects:Nuclei_preliminary
    Name the objects to be identified:Cell_preliminary_precursor01
    Select the method to identify the secondary objects:Propagation
    Select the input image:RawGFP
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:10
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:Yes
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
ConvertImageToObjects:[module_num:14|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
    Select the input image:CellPoseMask
    Name the output object:CellPoseMask
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

MeasureObjectSizeShape:[module_num:15|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
    Select object sets to measure:CellPoseMask
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:16|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
    Select the objects to filter:CellPoseMask
    Name the output objects:CellPoseMask_ArtifactsRemoved_precursor01
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:12000
    Filter using a maximum measurement value?:No
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
DilateObjects:[module_num:17|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notes:['']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
    Select the input object:CellPoseMask_ArtifactsRemoved_precursor01
    Name the output object:CellPoseMask_ArtifactsRemoved_precursor02
    Structuring element:disk,4

FillObjects:[module_num:18|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
    Select the input object:CellPoseMask_ArtifactsRemoved_precursor02
    Name the output object:CellPoseMask_ArtifactsRemoved_precursor03
    Minimum hole size:20
    Planewise fill:No
    Filling method:Holes

ErodeObjects:[module_num:19|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
    Select the input object:CellPoseMask_ArtifactsRemoved_precursor03
    Name the output object:CellPoseMask_ArtifactsRemoved
    Structuring element:Disk,1
    Prevent object removal:Yes
    Relabel resulting objects:No

MaskObjects:[module_num:20|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
    Select objects to be masked:CellPoseMask_ArtifactsRemoved
    Name the masked objects:Cell_preliminary_precursor02
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Cell_preliminary_precursor01
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:No

RelateObjects:[module_num:21|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
    Parent objects:Nuclei_preliminary
    Child objects:Cell_preliminary_precursor02
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:22|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
    Select the input objects:Cell_preliminary_precursor02
    Name the new objects:Cell_WithoutNucleus
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Nuclei_preliminary
    Output object type:Disconnected

FilterObjects:[module_num:23|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
    Select the objects to filter:Cell_WithoutNucleus
    Name the output objects:Cell_preliminary
    Select the filtering mode:Image or mask border
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    Additional object count:0
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    Keep removed objects as a separate set?:No
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
ConvertObjectsToImage:[module_num:24|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
    Select the input objects:Cell_preliminary
    Name the output image:Cell_preliminary
    Select the color format:Grayscale
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
SaveImages:[module_num:25|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
    Select the type of image to save:Image
    Select the image to save:Cell_preliminary
    Select method for constructing file names:From image filename
    Select image name for file prefix:RawGFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Cell_Preliminary
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|OverlaysAndMasks
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

Align:[module_num:26|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notes:['next MODULE group:', '', 'refine nuclei, exclusively focussing on included cells (=> Nuclei mask)']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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

MaskObjects:[module_num:27|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
    Select objects to be masked:Nuclei_preliminary
    Name the masked objects:Nuclei_mask
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Cell_preliminary
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

ConvertObjectsToImage:[module_num:28|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
    Select the input objects:Nuclei_mask
    Name the output image:Nuclei_mask
    Select the color format:Grayscale
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
SaveImages:[module_num:29|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
    Select the type of image to save:Image
    Select the image to save:Nuclei_mask
    Select method for constructing file names:From image filename
    Select image name for file prefix:RawGFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_NucleiMask
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|OverlaysAndMasks
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

Align:[module_num:30|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notes:['next MODULE group:', '', 'detect Cytosol (preliminary)']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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

IdentifyTertiaryObjects:[module_num:31|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notes:['']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
    Select the larger identified objects:Cell_preliminary
    Select the smaller identified objects:Nuclei_mask
    Name the tertiary objects to be identified:Cytoplasm_preliminary_precursor01
    Shrink smaller object prior to subtraction?:No

RelateObjects:[module_num:32|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notes:['']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enabled:False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
    Parent objects:Cell_preliminary
    Child objects:Cytoplasm_preliminary_precursor01
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:33|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notes:['']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
    Select the input objects:Cytoplasm_preliminary_precursor01
    Name the new objects:Cytoplasm_preliminary
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cell_preliminary
    Output object type:Disconnected

ConvertObjectsToImage:[module_num:34|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notes:['']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
    Select the input objects:Cytoplasm_preliminary
    Name the output image:Cytoplasm_preliminary
    Select the color format:Grayscale
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
SaveImages:[module_num:35|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
    Select the type of image to save:Image
    Select the image to save:Cytoplasm_preliminary
    Select method for constructing file names:From image filename
    Select image name for file prefix:RawGFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Cytoplasm_preliminary
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|OverlaysAndMasks
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

Align:[module_num:36|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notes:['next MODULE group:', '', 'detect ER (preliminary). ', '', 'This involves 3 sub-module groups:', '1. group one detects ER via a dual thresholding step (also known as „Method2plus").', '2. group two detects ER by enhancing dark holes (e.g. non-ER-covered regions) in the cytosol (also known as „Method1").', '3. group three combines the preliminary ER masks retrieved by the first two module groups (also known as „Method3").']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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

Align:[module_num:37|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notes:['next MODULE sub-group:', 'Submodule 1 of 3 to detect ER (preliminary). ', '', '1. group one detects ER via a dual thresholding step (also known as „Method2plus").', '2. group two detects ER by enhancing dark holes (e.g. non-ER-covered regions) in the cytosol (also known as „Method1").', '3. group three combines the preliminary ER masks retrieved by the first two module groups (also known as „Method3").']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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

MaskImage:[module_num:38|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
    Select the input image:RawGFP
    Name the output image:ER_preliminary_precursor01
    Use objects or an image as a mask?:Objects
    Select object for mask:Cytoplasm_preliminary
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    Invert the mask?:No

Threshold:[module_num:39|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
    Select the input image:ER_preliminary_precursor01
    Name the output image:ER_preliminary_precursor02_perinuclear
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:10
    Threshold correction factor:2.2
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:Yes
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
IdentifyPrimaryObjects:[module_num:40|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
    Select the input image:ER_preliminary_precursor02_perinuclear
    Name the primary objects to be identified:ER_preliminary_precursor03_perinuclear
    Typical diameter of objects, in pixel units (Min,Max):100,500
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.9
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
IdentifyTertiaryObjects:[module_num:41|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
    Select the larger identified objects:Cytoplasm_preliminary
    Select the smaller identified objects:ER_preliminary_precursor03_perinuclear
    Name the tertiary objects to be identified:ER_preliminary_precursor04_peripheral
    Shrink smaller object prior to subtraction?:No

RelateObjects:[module_num:42|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
    Parent objects:Cell_preliminary
    Child objects:ER_preliminary_precursor04_peripheral
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:43|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
    Select the input objects:ER_preliminary_precursor04_peripheral
    Name the new objects:ER_preliminary_precursor05_peripheral
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cell_preliminary
    Output object type:Disconnected

MaskImage:[module_num:44|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
    Select the input image:RawGFP
    Name the output image:ER_preliminary_precursor06_peripheral
    Use objects or an image as a mask?:Objects
    Select object for mask:ER_preliminary_precursor05_peripheral
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    Invert the mask?:No

EnhanceOrSuppressFeatures:[module_num:45|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
    Select the input image:ER_preliminary_precursor06_peripheral
    Name the output image:ER_preliminary_precursor07_EnhancedTubules
    Select the operation:Enhance
    Feature size:10
    Feature type:Neurites
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    Smoothing scale:1
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    Enhancement method:Tubeness
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    Rescale result image:Yes

Threshold:[module_num:46|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
    Select the input image:ER_preliminary_precursor07_EnhancedTubules
    Name the output image:ER_preliminary_precursor08_EnhancedTubules
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.02
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
ExpandOrShrinkObjects:[module_num:47|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
    Select the input objects:Cytoplasm_preliminary
    Name the output objects:Cytoplasm_preliminary_shrunken
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:2
    Fill holes in objects so that all objects shrink to a single point?:No
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
MaskImage:[module_num:48|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
    Select the input image:ER_preliminary_precursor08_EnhancedTubules
    Name the output image:ER_preliminary_precursor09_Tubules
    Use objects or an image as a mask?:Objects
    Select object for mask:Cytoplasm_preliminary_shrunken
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    Invert the mask?:No

ConvertImageToObjects:[module_num:49|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
    Select the input image:ER_preliminary_precursor09_Tubules
    Name the output object:ER_preliminary_precursor09_Tubules
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

RelateObjects:[module_num:50|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
    Parent objects:Cell_preliminary
    Child objects:ER_preliminary_precursor09_Tubules
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:51|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
    Select the input objects:ER_preliminary_precursor09_Tubules
    Name the new objects:ER_preliminary_precursor10_TubularNetwork
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cell_preliminary
    Output object type:Disconnected

CombineObjects:[module_num:52|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
    Select initial object set:ER_preliminary_precursor03_perinuclear
    Select object set to combine:ER_preliminary_precursor10_TubularNetwork
    Select how to handle overlapping objects:Merge
    Name the combined object set:ER_preliminary_precursor11_method2plus_DualThresholding

RelateObjects:[module_num:53|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
    Parent objects:Cell_preliminary
    Child objects:ER_preliminary_precursor11_method2plus_DualThresholding
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:54|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
    Select the input objects:ER_preliminary_precursor11_method2plus_DualThresholding
    Name the new objects:ER_preliminary_precursor12_method2plus_DualThresholding
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cell_preliminary
    Output object type:Disconnected

Align:[module_num:55|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notes:['next MODULE sub-group:', 'Submodule 2 of 3 to detect ER (preliminary). ', '', '1. group one detects ER via a dual thresholding step (also known as „Method2plus").', '2. group two detects ER by enhancing dark holes (e.g. non-ER-covered regions) in the cytosol (also known as „Method1").', '3. group three combines the preliminary ER masks retrieved by the first two module groups (also known as „Method3").']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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

MaskImage:[module_num:56|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
    Select the input image:RawGFP
    Name the output image:Cytoplasm_preliminary_masked
    Use objects or an image as a mask?:Objects
    Select object for mask:Cytoplasm_preliminary
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    Invert the mask?:No

EnhanceOrSuppressFeatures:[module_num:57|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
    Select the input image:Cytoplasm_preliminary_masked
    Name the output image:ER_preliminary_precursor13_CytoplasmEnhancedHoles
    Select the operation:Enhance
    Feature size:10
    Feature type:Dark holes
    Range of hole sizes:1,30
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
ConvertImageToObjects:[module_num:58|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
    Select the input image:ER_preliminary_precursor13_CytoplasmEnhancedHoles
    Name the output object:ER_preliminary_precursor13_CytoplasmEnhancedHoles
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

MaskObjects:[module_num:59|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
    Select objects to be masked:ER_preliminary_precursor13_CytoplasmEnhancedHoles
    Name the masked objects:ER_preliminary_precursor14_CytoplasmEnhancedHoles
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Cytoplasm_preliminary
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

ExpandOrShrinkObjects:[module_num:60|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notes:['']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
    Select the input objects:Cell_preliminary
    Name the output objects:Cell_preliminary_shrunken
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:10
    Fill holes in objects so that all objects shrink to a single point?:No
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
MaskObjects:[module_num:61|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
    Select objects to be masked:Cell_preliminary_shrunken
    Name the masked objects:Cytoplasm_preliminary_shrunken_2
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Cytoplasm_preliminary
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:No

IdentifyTertiaryObjects:[module_num:62|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
    Select the larger identified objects:Cytoplasm_preliminary_shrunken_2
    Select the smaller identified objects:ER_preliminary_precursor14_CytoplasmEnhancedHoles
    Name the tertiary objects to be identified:ER_preliminary_precursor15_InvertedHoles
    Shrink smaller object prior to subtraction?:No

RelateObjects:[module_num:63|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
    Parent objects:Cell_preliminary
    Child objects:ER_preliminary_precursor15_InvertedHoles
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:64|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
    Select the input objects:ER_preliminary_precursor15_InvertedHoles
    Name the new objects:ER_preliminary_precursor15_1_InvertedHolesMerged
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cell_preliminary
    Output object type:Disconnected

Align:[module_num:65|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notes:['next MODULE sub-group:', 'Submodule 3 of 3 to detect ER (preliminary). ', '', '1. group one detects ER via a dual thresholding step (also known as „Method2plus").', '2. group two detects ER by enhancing dark holes (e.g. non-ER-covered regions) in the cytosol (also known as „Method1").', '3. group three combines the preliminary ER masks retrieved by the first two module groups (also known as „Method3").']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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

CombineObjects:[module_num:66|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
    Select initial object set:ER_preliminary_precursor12_method2plus_DualThresholding
    Select object set to combine:ER_preliminary_precursor15_1_InvertedHolesMerged
    Select how to handle overlapping objects:Merge
    Name the combined object set:ER_preliminary_precursor16_method3

MeasureObjectSizeShape:[module_num:67|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
    Select object sets to measure:ER_preliminary_precursor16_method3
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:68|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
    Select the objects to filter:ER_preliminary_precursor16_method3
    Name the output objects:ER_preliminary_precursor17_method3_filtered
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:5
    Filter using a maximum measurement value?:No
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
RelateObjects:[module_num:69|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
    Parent objects:Cell_preliminary
    Child objects:ER_preliminary_precursor17_method3_filtered
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:70|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
    Select the input objects:ER_preliminary_precursor17_method3_filtered
    Name the new objects:ER_preliminary
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cell_preliminary
    Output object type:Disconnected

ConvertObjectsToImage:[module_num:71|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
    Select the input objects:ER_preliminary
    Name the output image:ER_preliminary
    Select the color format:Grayscale
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
SaveImages:[module_num:72|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
    Select the type of image to save:Image
    Select the image to save:ER_preliminary
    Select method for constructing file names:From image filename
    Select image name for file prefix:RawGFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_ER_preliminary
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|OverlaysAndMasks
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

Align:[module_num:73|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notes:['next MODULE group:', '', 'refine cells, borders refined via preliminary ER (=> Cell mask)', '', 'ADD: filter out cells without an detected ER!!!!']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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

DilateObjects:[module_num:74|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
    Select the input object:ER_preliminary
    Name the output object:Cell_precursor01_dilatedER
    Structuring element:disk,20

FillObjects:[module_num:75|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
    Select the input object:Cell_precursor01_dilatedER
    Name the output object:Cell_precursor02_dilatedER_filled
    Minimum hole size:400.0
    Planewise fill:No
    Filling method:Holes

ConvertObjectsToImage:[module_num:76|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
    Select the input objects:Cell_precursor02_dilatedER_filled
    Name the output image:Cell_precursor02_dilatedER_filled
    Select the color format:Grayscale
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
ErodeImage:[module_num:77|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
    Select the input image:Cell_precursor02_dilatedER_filled
    Name the output image:Cell_precursor03_dilatedER_filled_erroded
    Structuring element:disk,20

IdentifySecondaryObjects:[module_num:78|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
    Select the input objects:Nuclei_mask
    Name the objects to be identified:Cell_precursor03_refinedCellBorders
    Select the method to identify the secondary objects:Propagation
    Select the input image:Cell_precursor03_dilatedER_filled_erroded
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    Regularization factor:0.001
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:2
    Threshold correction factor:10
    Lower and upper bounds on threshold:0.01,1.0
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    Log transform before thresholding?:Yes
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
MaskObjects:[module_num:79|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
    Select objects to be masked:Cell_preliminary
    Name the masked objects:Cell_precursor04
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Cell_precursor03_refinedCellBorders
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

IdentifySecondaryObjects:[module_num:80|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
    Select the input objects:Cell_precursor04
    Name the objects to be identified:Cell_precursor05
    Select the method to identify the secondary objects:Propagation
    Select the input image:Cell_precursor03_dilatedER_filled_erroded
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:2
    Threshold correction factor:10
    Lower and upper bounds on threshold:0.01,1.0
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    Log transform before thresholding?:Yes
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
MaskObjects:[module_num:81|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
    Select objects to be masked:CellPoseMask_ArtifactsRemoved
    Name the masked objects:Cell_precursor06
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Cell_precursor05
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MeasureObjectSizeShape:[module_num:82|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
    Select object sets to measure:Cell_precursor06
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:83|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notes:['']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
    Select the objects to filter:Cell_precursor06
    Name the output objects:Cell_precursor07
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:12000
    Filter using a maximum measurement value?:No
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
RelateObjects:[module_num:84|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
    Parent objects:Cell_preliminary
    Child objects:Cell_precursor07
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:85|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
    Select the input objects:Cell_precursor07
    Name the new objects:Cell_Mask
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cell_preliminary
    Output object type:Disconnected

ConvertObjectsToImage:[module_num:86|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
    Select the input objects:Cell_Mask
    Name the output image:Cell_Mask
    Select the color format:Grayscale
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
SaveImages:[module_num:87|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
    Select the type of image to save:Image
    Select the image to save:Cell_Mask
    Select method for constructing file names:From image filename
    Select image name for file prefix:RawGFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Cell_Mask
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|OverlaysAndMasks
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

Align:[module_num:88|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notes:['next MODULE group:', '', 'relate Nuclei to refined Cell_Mask']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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

RelateObjects:[module_num:89|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notes:['']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
    Parent objects:Nuclei_mask
    Child objects:Cell_Mask
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
Align:[module_num:90|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notes:['next MODULE group:', '', 'refine cytosol, using updated cellborders (refined through preliminary ER), (=> Cytosol mask)']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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

IdentifyTertiaryObjects:[module_num:91|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
    Select the larger identified objects:Cell_Mask
    Select the smaller identified objects:Nuclei_mask
    Name the tertiary objects to be identified:Cytoplasm_Mask_precursor01
    Shrink smaller object prior to subtraction?:No

RelateObjects:[module_num:92|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notes:['']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enabled:False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
    Parent objects:Cell_Mask
    Child objects:Cytoplasm_Mask_precursor01
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:93|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notes:['']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
    Select the input objects:Cytoplasm_Mask_precursor01
    Name the new objects:Cytoplasm_Mask
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cell_Mask
    Output object type:Disconnected

ConvertObjectsToImage:[module_num:94|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
    Select the input objects:Cytoplasm_Mask
    Name the output image:Cytoplasm_Mask
    Select the color format:Grayscale
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
SaveImages:[module_num:95|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
    Select the type of image to save:Image
    Select the image to save:Cytoplasm_Mask
    Select method for constructing file names:From image filename
    Select image name for file prefix:RawGFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Cyoplasm_Mask
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|OverlaysAndMasks
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

Align:[module_num:96|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notes:['next MODULE group:', '', 'refine ER, using updated cellborders on cytoplasm mask (refined through preliminary ER), (=> ER mask)']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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

MaskObjects:[module_num:97|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
    Select objects to be masked:ER_preliminary
    Name the masked objects:ER_preliminary02
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Cytoplasm_Mask
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

RelateObjects:[module_num:98|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
    Parent objects:Cell_Mask
    Child objects:ER_preliminary02
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:99|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
    Select the input objects:ER_preliminary02
    Name the new objects:ER_Mask
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cell_Mask
    Output object type:Disconnected

ConvertObjectsToImage:[module_num:100|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
    Select the input objects:ER_Mask
    Name the output image:ER_Mask
    Select the color format:Grayscale
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
SaveImages:[module_num:101|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
    Select the type of image to save:Image
    Select the image to save:ER_Mask
    Select method for constructing file names:From image filename
    Select image name for file prefix:RawGFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_ER_Mask
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|OverlaysAndMasks
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

Align:[module_num:102|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notes:['next MODULE group:', '', 'define ER gaps („polygons") by inverting ER mask on Cytosol mask (=> Polygons mask)']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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

MaskObjects:[module_num:103|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
    Select objects to be masked:Cytoplasm_Mask
    Name the masked objects:Polygons_precursor_01
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ER_Mask
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

CombineObjects:[module_num:104|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
    Select initial object set:Polygons_precursor_01
    Select object set to combine:Polygons_precursor_01
    Select how to handle overlapping objects:Merge
    Name the combined object set:Polygons_combined

RelateObjects:[module_num:105|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
    Parent objects:Cell_Mask
    Child objects:Polygons_combined
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:106|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
    Select the input objects:Polygons_combined
    Name the new objects:Polygons_Mask
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cell_Mask
    Output object type:Disconnected

ConvertObjectsToImage:[module_num:107|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
    Select the input objects:Polygons_Mask
    Name the output image:Polygons_Mask
    Select the color format:Grayscale
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
SaveImages:[module_num:108|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
    Select the type of image to save:Image
    Select the image to save:Polygons_Mask
    Select method for constructing file names:From image filename
    Select image name for file prefix:RawGFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Polygons_Mask
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|OverlaysAndMasks
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

Align:[module_num:109|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notes:['next MODULE group:', '', 'distinguish tubular from sheet-like ER via erosion&dilation (= opening) on the ER mask (=> sheet-like mask, tubular mask)', '', 'erosion: 2 pixels, disk shape', 'dilation: 2 pixels, disk shape']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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

DilateObjects:[module_num:110|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
    Select the input object:Nuclei_mask
    Name the output object:Opening_TubulesSheets_HighLowCurvature_precursor01
    Structuring element:disk,5

CombineObjects:[module_num:111|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
    Select initial object set:ER_Mask
    Select object set to combine:Opening_TubulesSheets_HighLowCurvature_precursor01
    Select how to handle overlapping objects:Merge
    Name the combined object set:Opening_TubulesSheets_HighLowCurvature_precursor02

ErodeObjects:[module_num:112|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
    Select the input object:Opening_TubulesSheets_HighLowCurvature_precursor02
    Name the output object:Opening_TubulesSheets_HighLowCurvature_precursor03_Eroded2
    Structuring element:disk,2
    Prevent object removal:No
    Relabel resulting objects:No

DilateObjects:[module_num:113|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
    Select the input object:Opening_TubulesSheets_HighLowCurvature_precursor03_Eroded2
    Name the output object:Opening_TubulesSheets_precursor04_Eroded2_Dilated2
    Structuring element:disk,2

MaskObjects:[module_num:114|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
    Select objects to be masked:ER_Mask
    Name the masked objects:Opening_Sheets_precursor05
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Opening_TubulesSheets_precursor04_Eroded2_Dilated2
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:No

RelateObjects:[module_num:115|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
    Parent objects:Cell_Mask
    Child objects:Opening_Sheets_precursor05
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:116|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
    Select the input objects:Opening_Sheets_precursor05
    Name the new objects:Opening_Sheets_Mask
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cell_Mask
    Output object type:Disconnected

ConvertObjectsToImage:[module_num:117|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
    Select the input objects:Opening_Sheets_Mask
    Name the output image:Opening_Sheets_Mask
    Select the color format:Grayscale
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
SaveImages:[module_num:118|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
    Select the type of image to save:Image
    Select the image to save:Opening_Sheets_Mask
    Select method for constructing file names:From image filename
    Select image name for file prefix:RawGFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Sheets_Mask
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|OverlaysAndMasks
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MaskObjects:[module_num:119|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
    Select objects to be masked:ER_Mask
    Name the masked objects:Opening_Tubules_precursor05
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Opening_TubulesSheets_precursor04_Eroded2_Dilated2
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:Yes

RelateObjects:[module_num:120|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
    Parent objects:Cell_Mask
    Child objects:Opening_Tubules_precursor05
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:121|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
    Select the input objects:Opening_Tubules_precursor05
    Name the new objects:Opening_Tubules_Mask
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cell_Mask
    Output object type:Disconnected

ConvertObjectsToImage:[module_num:122|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
    Select the input objects:Opening_Tubules_Mask
    Name the output image:Opening_Tubules_Mask
    Select the color format:Grayscale
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
SaveImages:[module_num:123|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
    Select the type of image to save:Image
    Select the image to save:Opening_Tubules_Mask
    Select method for constructing file names:From image filename
    Select image name for file prefix:RawGFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Tubules_Mask
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|OverlaysAndMasks
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

Align:[module_num:124|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notes:['next MODULE group:', '', 'distinguish high-curvature from low-curvature ER by differential erosion&dilation on the ER mask (=> high-curvature mask, low-curvature mask)', '', 'erosion: 2 pixels, disk shape', 'dilation: 1 pixel, disk shape']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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

DilateObjects:[module_num:125|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
    Select the input object:Opening_TubulesSheets_HighLowCurvature_precursor03_Eroded2
    Name the output object:Opening_HighLowCurvature_precursor04_Eroded2_Dilated1
    Structuring element:disk,1

MaskObjects:[module_num:126|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
    Select objects to be masked:ER_Mask
    Name the masked objects:Opening_LowCurvature_precursor05
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Opening_HighLowCurvature_precursor04_Eroded2_Dilated1
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:No

RelateObjects:[module_num:127|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
    Parent objects:Cell_Mask
    Child objects:Opening_LowCurvature_precursor05
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:128|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
    Select the input objects:Opening_LowCurvature_precursor05
    Name the new objects:Opening_LowCurvature_Mask
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cell_Mask
    Output object type:Disconnected

ConvertObjectsToImage:[module_num:129|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
    Select the input objects:Opening_LowCurvature_Mask
    Name the output image:Opening_LowCurvature_Mask
    Select the color format:Grayscale
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
SaveImages:[module_num:130|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
    Select the type of image to save:Image
    Select the image to save:Opening_LowCurvature_Mask
    Select method for constructing file names:From image filename
    Select image name for file prefix:RawGFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_LowCurvature_Mask
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|OverlaysAndMasks
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MaskObjects:[module_num:131|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
    Select objects to be masked:ER_Mask
    Name the masked objects:Opening_HighCurvature_precursor05
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Opening_HighLowCurvature_precursor04_Eroded2_Dilated1
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:Yes

RelateObjects:[module_num:132|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
    Parent objects:Cell_preliminary
    Child objects:Opening_HighCurvature_precursor05
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:133|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
    Select the input objects:Opening_HighCurvature_precursor05
    Name the new objects:Opening_HighCurvature_Mask
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cell_preliminary
    Output object type:Disconnected

ConvertObjectsToImage:[module_num:134|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
    Select the input objects:Opening_HighCurvature_Mask
    Name the output image:Opening_HighCurvature_Mask
    Select the color format:Grayscale
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
SaveImages:[module_num:135|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
    Select the type of image to save:Image
    Select the image to save:Opening_HighCurvature_Mask
    Select method for constructing file names:From image filename
    Select image name for file prefix:RawGFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_HighCurvature_Mask
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|OverlaysAndMasks
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

Align:[module_num:136|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notes:['next MODULE group:', '', 'measurements (as implicated in individual descriptions) and data export of basic parameters (areas of cells, nuclei, cytoplasm, ER, polygons, sheets/tubules and low/high curvature ER). ']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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

MeasureObjectSizeShape:[module_num:137|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
    Select object sets to measure:Cell_Mask, Cytoplasm_Mask, ER_Mask, Nuclei_mask, Opening_HighCurvature_Mask, Opening_LowCurvature_Mask, Opening_Sheets_Mask, Opening_Tubules_Mask, Polygons_Mask
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:138|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|Results
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Nuclei_mask|AreaShape_Area,Opening_Sheets_Mask|AreaShape_Area,Cell_Mask|AreaShape_Area,Cell_Mask|Children_Polygons_combined_Count,Opening_LowCurvature_Mask|AreaShape_Area,Opening_Tubules_Mask|AreaShape_Area,Opening_HighCurvature_Mask|AreaShape_Area,Cytoplasm_Mask|AreaShape_Area,ER_Mask|AreaShape_Area,Polygons_Mask|AreaShape_Area
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Measurements_
    Overwrite existing files without warning?:Yes
    Data to export:Nuclei_mask
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Cell_Mask
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Cytoplasm_Mask
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:ER_Mask
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Polygons_Mask
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Opening_Sheets_Mask
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Opening_Tubules_Mask
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Opening_LowCurvature_Mask
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Opening_HighCurvature_Mask
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

ExportToSpreadsheet:[module_num:139|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|Results
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Nuclei_mask|AreaShape_Area,Opening_Sheets_Mask|AreaShape_Area,Cell_Mask|AreaShape_Area,Cell_Mask|Children_Polygons_combined_Count,Opening_LowCurvature_Mask|AreaShape_Area,Opening_Tubules_Mask|AreaShape_Area,Opening_HighCurvature_Mask|AreaShape_Area,Cytoplasm_Mask|AreaShape_Area,ER_Mask|AreaShape_Area,Polygons_Mask|AreaShape_Area
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Measurements_
    Overwrite existing files without warning?:Yes
    Data to export:Cell_Mask
    Combine these object measurements with those of the previous object?:Yes
    File name:CombinedOutput.csv
    Use the object name for the file name?:No
    Data to export:Cytoplasm_Mask
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:ER_Mask
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:Polygons_Mask
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:Opening_Sheets_Mask
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:Opening_Tubules_Mask
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:Opening_LowCurvature_Mask
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:Opening_HighCurvature_Mask
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes

Align:[module_num:140|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notes:['next MODULE group:', '', 'Radial ER/gap coverage.', '', 'Uncheck all boxes in this module if a Radial ER/gap coverage measurement is not required. This will speed up the processing time significantly.']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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

ConvertObjectsToImage:[module_num:141|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
    Select the input objects:ER_Mask
    Name the output image:ER_Mask_forRID
    Select the color format:Binary (black & white)
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
MeasureObjectIntensityDistribution:[module_num:142|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
    Select images to measure:ER_Mask_forRID
    Hidden:1
    Hidden:1
    Hidden:1
    Calculate intensity Zernikes?:None
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    Select objects to measure:Cell_Mask
    Object to use as center?:Edges of other objects
    Select objects to use as centers:Nuclei_mask
    Scale the bins?:Yes
    Number of bins:8
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    Image:None
    Objects to display:Do not use
    Number of bins:5
    Measurement:Fraction at Distance
    Color map:Default
    Save display as image?:Yes
    Output image name:RID_ER_Mask

SaveImages:[module_num:143|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
    Select the type of image to save:Image
    Select the image to save:RID_ER_Mask
    Select method for constructing file names:From image filename
    Select image name for file prefix:RawGFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_RID_ER_Mask
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|OverlaysAndMasks
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ConvertObjectsToImage:[module_num:144|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
    Select the input objects:Cell_Mask
    Name the output image:Cell_Mask_forRID
    Select the color format:Binary (black & white)
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
MeasureObjectIntensityDistribution:[module_num:145|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
    Select images to measure:Cell_Mask_forRID
    Hidden:1
    Hidden:1
    Hidden:1
    Calculate intensity Zernikes?:None
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    Select objects to measure:Cell_Mask
    Object to use as center?:Edges of other objects
    Select objects to use as centers:Nuclei_mask
    Scale the bins?:Yes
    Number of bins:8
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    Image:None
    Objects to display:Do not use
    Number of bins:5
    Measurement:Fraction at Distance
    Color map:Default
    Save display as image?:Yes
    Output image name:RID_Cell_Mask

SaveImages:[module_num:146|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
    Select the type of image to save:Image
    Select the image to save:RID_Cell_Mask
    Select method for constructing file names:From image filename
    Select image name for file prefix:RawGFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_RID_Cell_Mask
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|OverlaysAndMasks
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ConvertObjectsToImage:[module_num:147|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
    Select the input objects:Polygons_Mask
    Name the output image:Polygons_Mask_forRID
    Select the color format:Binary (black & white)
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
MeasureObjectIntensityDistribution:[module_num:148|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
    Select images to measure:Polygons_Mask_forRID
    Hidden:1
    Hidden:1
    Hidden:1
    Calculate intensity Zernikes?:None
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    Select objects to measure:Cell_Mask
    Object to use as center?:Edges of other objects
    Select objects to use as centers:Nuclei_mask
    Scale the bins?:Yes
    Number of bins:8
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    Image:None
    Objects to display:Do not use
    Number of bins:5
    Measurement:Fraction at Distance
    Color map:Default
    Save display as image?:Yes
    Output image name:RID_Polygons_Mask

SaveImages:[module_num:149|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
    Select the type of image to save:Image
    Select the image to save:RID_Polygons_Mask
    Select method for constructing file names:From image filename
    Select image name for file prefix:RawGFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_RID_Polygons_Mask
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|OverlaysAndMasks
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MeasureObjectIntensity:[module_num:150|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
    Select images to measure:Cell_Mask_forRID, ER_Mask_forRID, Polygons_Mask_forRID
    Select objects to measure:Cell_Mask, ER_Mask, Polygons_Mask

ExportToSpreadsheet:[module_num:151|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|Results
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Cell_Mask|RadialDistribution_FracAtD_ER_Mask_forRID_3of8,Cell_Mask|RadialDistribution_FracAtD_ER_Mask_forRID_4of8,Cell_Mask|RadialDistribution_FracAtD_ER_Mask_forRID_2of8,Cell_Mask|RadialDistribution_FracAtD_ER_Mask_forRID_6of8,Cell_Mask|RadialDistribution_FracAtD_ER_Mask_forRID_5of8,Cell_Mask|RadialDistribution_FracAtD_ER_Mask_forRID_7of8,Cell_Mask|RadialDistribution_FracAtD_ER_Mask_forRID_1of8,Cell_Mask|RadialDistribution_FracAtD_ER_Mask_forRID_8of8,Cell_Mask|RadialDistribution_FracAtD_Cell_Mask_forRID_3of8,Cell_Mask|RadialDistribution_FracAtD_Cell_Mask_forRID_5of8,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Measurements_
    Overwrite existing files without warning?:Yes
    Data to export:Cell_Mask
    Combine these object measurements with those of the previous object?:Yes
    File name:RadialERDistribution_Output.csv
    Use the object name for the file name?:No
    Data to export:ER_Mask
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:Polygons_Mask
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:Cytoplasm_Mask
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes

Align:[module_num:152|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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen
